config:
  title: Collection_Management
  description: A group of libraries to assist with collections and using collections
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Cannon Mallory, affiliation: University of Washington}, {name: Amy Cash, affiliation: University of Washington}, {name: Justin Vrana, affiliation: University of Washington}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  acknowledgements: [{name: Benjamin Keller, affiliation: University of Washington}, {name: Devin Strickland, affiliation: University of Washington}]
  github: {user: malloc3, repo: aq-collection-management, organization: klavinslab}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: ExampleUses
category: Collection Management
deployed: false
on_the_fly: false
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protocol:
# This is to show the basic uses of the Collection Management library
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'Collection_Management/CollectionLocation'

class Protocol
  include CollectionDisplay
  include CollectionTransfer
  include CollectionLocation
  include CollectionActions


  def main


    #CollectionActions

    #many basic actions can be done with a Collection using CollectionActions

    # A new collection can easily be made and instructions given to retrieve and
    # label the collection with one line.  By default instructions will be given
    # however these instructions can be skipped if label_plate is false
    new_collection = make_new_plate('96 Well Sample Plate', label_plate: true)

    #We can set the location of an array of collections easily using
    set_location([new_collection], "My New Location")

    # If we want to see where all these locations are and diplay this to the tech
    # We can use a short show block and utilize "create_location_table"
    show do
      title "Here we display the location of our collection"
      table create_location_table([new_collection])
    end

    # We can then store the collections using "store_items"
    # This will provide instructions for the storage of items as well as
    # set their location if a location string is provided
    # This either can be an array of items or an individual item
    store_items(new_collection, location: 'Short Term Storage')

    # Lastly we trash the collection (or a group of items) using 'trash_objects'
    # This will create instructions for trashing the object and set its status to 'deleted'
    # It will take either a single item or an array of items
    trash_objects(new_collection)








    # CollectionLocation
    # ColelctionLocation is primarily for giving and managing locations of items inside of collections
    #   It does not manage the physical location of the Collection its self (thats what CollectionActions
    #   is for).

    # To look at and deal with the locations of items in a collection we must first create and populate
    # a collection with items.   There are nice methods that assist with this that will be described
    # later but for now we will just fill the collection using standard Aquarium methods

    # this time we will create a new collection but will not provide instructions to fetch
    # and label the collection.  In this case this does exactly the same thing as 
    # Collection.new_collection('96 Well Sample Plate')
    location_collection = make_new_plate('96 Well Sample Plate', label_plate: false)

    array_of_samples = []

    operations.each do |op|
      array_of_samples += op.input_array('InputArray').each {|fv| fv.sample}
    end
    example_sample = array_of_samples.first

    # This is a built in colleciton method that will add the array of samples to the collection
    location_collection.add_samples(array_of_samples) #populates the colleciton with samples


    # first if we want to find the location of a sample in the collection we can call
    # collection.find(sample) this will return an array [row, column]
    row_col_location = location_collection.find(example_sample)
    show do 
      note "#{row_col_location}"
    end

    # similarly we could use get_obj_location(collection, object_to_find)
    # You can pass this method either a single object or an array of objects
    # if you pass a single object it will work exactly the same as .find
    # however if an array of objects are passed the method will return a Hash
    # with keys as the searched object and the values as the array of locations
    returned_locations = get_obj_location(collection, array_of_samples)
    show do
      title "The locations of many objects"
      returned_locations.each do |key, array_of_locations|
        note "The object #{key.id} is in locations #{array_of_locations}"
      end
    end

    # If you know that you will want the Alpha Numerical location when you search for an object
    # you can use get_alpha_num_location.   This works exactly the same as get_obj_locations
    # Except it will return alpha numerical locations and not coordinates
    alpha_location = get_alpha_num_location(collection, array_of_samples)




    # The functions above are useful but really dont really expand the standard methods very much
    # The CollectionLocations library really helps out when dealing with locations listed in both
    # the [row, column] format as well as the AlphaNumerical format (e.g. A1, B12)

    # Two methods to help with conversion between Alpha Numerical location and coordinates are
    # convert_location_to_coordinates and convert_coordinates_to_location wich do exactly as the name 
    # describes

    # convert_location_to_coordinates will convert an alpha numerical string into rows and coordinates
    coordinates = convert_location_to_coordinates('A1')

    # convert_coordinates_to_location will conver a coordinate into a alpha numerical string
    alpha_location = convert_coordinates_to_location([1,1])

    show do
      title "Demonstration of convert_coordinates_to_location and convert_location_to_coordinates methods"
      note "#{coordinate}"
      note "#{alpha_location}"
    end



    # A common need is to find the part at a certain location in a collection
    # if we know the coordinate location of the part doin this is easy.  Simple put
    # collection.part(row,location)
    item = location_collection.part(1,1)

    # However if we only know the Alpha Numerical Location then you can use
    item = locate_part(location_collection, 'A1')


    trash_objects(location_collection)

    # CollectionDisplay
    # One thing that is always important when writing protocols is displaying to the
    # tech what they need to do.  To assist with this CollectionDisplay was developed.

    # Before we get into the nitty gritty of CollectionDisplay a few ideas must be established
    # first.
    #
    # Most methods must be passed a Collection and an 'RCX' list.  RCX list stands for a list of the
    # format [[row, column, x], [row, column, x], ...]  where x is some extra information that affects 
    # what is displayed at the well (row, column).  Often x is just a string but in some case it can be
    # more to help influence how it is displayed.

    
    #First we need to create a colleciton with some samples
    display_collection = make_new_plate('96 Well Sample Plate', label_plate: false)
    array_of_samples = []
    operations.each do |op|
      array_of_samples += op.input_array('InputArray').each {|fv| fv.sample}
    end
    example_sample = array_of_samples.first
    display_collection.add_samples(array_of_samples)



    # To show all filled slots simply put highlight_non_empty
    #
    # The check option sets the wells as "checkable"
    # this forces the tech to click on each slot before they can click continue.
    # in this case check is set to false
    show do 
      title "This is all the filled slots"
      table highlight_non_empty(display_collection, check: false)
    end

    # To show all empty slots simply put
    show do
      title "This is all the empty slots"
      table highlight_empty(display_collection, check: false)
    end

    # The following two methods work the same as the the previous two
    # The only difference is that they also show a string with the 
    # alpha numerical location
    show do 
      title "Showing the alpha numerical labels as well"
      note "All the filled slots"
      table highlight_alpha_non_empty(display_collection, check: false)
      note "This is all the empty slots"
      table highlight_alpha_empty(display_collection, check: false)
    end
    
    


    # There are many ways to create an RCX list often a protocol will need a custom
    # format depending on what information is to be displayed.  It will be up to you
    # to make these custom RCX lists.  However there are a few basic methods that have been
    # created that make standard/common RCX lists.

    # One common desire is to display a collection and show the Alpha Numerical location
    # of some subset of samples.  This can illustrate a specific number of wells and ensure
    # there is a low chance of misunderstanding.  The following method makes an RCX list of teh
    # form [[row, column, AlphaLocation], ...]
    #
    # This method takes the collection and a list of samples or items that you want displayed
    # if a sample is in the collection multiple times it will create rcx components for each
    # location
    rcx_list = get_rcx_list(collection, array_of_samples)





    

    

  end

end

library: {name: CollectionActions, category: Collection Management}
code_source:
# Cannon Mallory
# malloc3@uw.edu
#
# Module for working with collections
# These actions should involve the WHOLE plate not individual wells.
# NOTE: The collection is doing the whole action

needs 'Standard Libs/ItemActions'

module CollectionActions
  include ItemActions

  # Creates new collection.  Instructions to tech optional
  #
  # @param c_type [String] the collection type
  # @param label_plate [Boolean] instructs tech to label if true
  # @return working_plate [Collection]
  def make_new_plate(c_type, label_plate: true)
    working_plate = Collection.new_collection(c_type)
    get_and_label_new_plate(working_plate) if label_plate
    working_plate
  end

  # Makes an exact copy of the from collection.
  # Will make the to_collection if needed
  #
  # @param from_collection [Collection]
  # @param to_collection [Collection]
  # @param label_plates [Boolean]
  # @return to_Collection [Collection]
  def exact_copy(from_collection, to_collection: nil, label_plates: false)
    collection_type = from_collection.object_type
    if to_collection.nil?
      to_collection = make_new_plate(collection_type, label_plate: label_plates)
    end
    matrix = from_collection.matrix
    to_collection.matrix = matrix
    to_collection
  end

  # Makes the required number of collections and populates with samples
  # returns an array of of collections created
  #
  # @param samples [Array<FieldValue>] or [Array<Samples>]
  # @param collection_type [String] the type of collection that is to be made
  # @param first_collection [Collection] optional a collection to start with
  # @param add_column_wise [Boolean] default false add samples by column
  # @param label_plates [Boolean] default false, provides instructions
  # @return [Array<Collection>] array of collections created
  def make_and_populate_collection(samples, collection_type: nil,
                                   first_collection: nil,
                                   add_column_wise: false,
                                   label_plates: false)

    if collection_type.nil? && first_collection.nil?
      ProtocolError 'Either collection_type or first_collection must be given'
    end

    unless collection_type.nil? || first_collection.nil?
      ProtocolError 'Both collection_type and first_collection cannot be given'
    end

    capacity = nil
    if collection_type.nil?
      collection_type = first_collection.object_type.name
      capacity = first_collection.capacity
      remaining_space = first_collection.get_empty.length
      add_samples_to_collection(samples[0...remaining_space - 1],
                                first_collection,
                                label_plates: label_plates,
                                add_column_wise: add_column_wise)
      samples = samples.drop(remaining_space)
    else
      obj_type = ObjectType.find_by_name(collection_type)
      capacity = obj_type.columns * obj_type.rows
    end

    collections = []
    collections.push(first_collection) unless first_collection.nil?
    grouped_samples = samples.in_groups_of(capacity, false)
    grouped_samples.each do |sub_samples|
      collection = make_new_plate(collection_type, label_plate: label_plates)
      add_samples_to_collection(sub_samples, collection, 
                                add_column_wise: add_column_wise)
      collections.push(collection)
    end
    collections
  end

  # Assigns samples to specific well locations
  #
  # @param samples [Array<FieldValue>] or [Array<Samples>]
  # @param to_collection [Collection]
  # @param add_row_wise [Boolean] default false, will add samples by column
  # @raise if not enough space in collection
  def add_samples_to_collection(samples, to_collection, add_column_wise: false)
    samples.map! do |fv|
      unless fv.is_a?(Sample)
        fv = fv.sample
      end
      fv
    end

    slots_left = to_collection.get_empty.length
    raise 'Not enough space in in collection' if samples.length > slots_left

    if add_column_wise
      add_samples_column_wise(samples, to_collection)
    else
      to_collection.add_samples(samples)
    end
    to_collection
  end

  # Adds samples to the first slot in the first available column
  # as opposed to column wise that the base version does.
  #
  # @param samples_to_add [Array<Samples>] an array of samples
  # @param collection [Collection] the collection to include samples
  def add_samples_column_wise(samples_to_add, collection)
    col_matrix = collection.matrix
    columns = col_matrix.first.size
    rows = col_matrix.size
    samples_to_add.each do |sample|
      break_pattern = false
      columns.times do |col|
        rows.times do |row|
          if collection.part(row, col).nil?
            collection.set(row, col, sample)
            break_pattern = true
            break
          end
        end
        break if break_pattern
      end
    end
  end

  # Instructions on getting and labeling new plate
  #
  # @param plate [Collection] the plate to be retrieved and labeled
  def get_and_label_new_plate(plate)
    show do
      title 'Get and Label Working Plate'
      note "Get a <b>#{plate.object_type.name}</b> and
           label it ID: <b>#{plate.id}</b>"
    end
  end

  # Associates field_values to corresponding samples in a collection
  # TODO not sure multiples of samples is handled in the best way...
  #
  # @param field_values [Array<Field Values>] array of field values
  # @param collection [Collection] the destination collection
  # replaced make_output_plate
  def associate_field_values_to_plate(field_values, collection)
    already_associated_parts = []
    field_values.each do |fv|
      r_c = nil
      collection.find(fv.sample).each do |loc|
        r_c = loc
        break unless already_associated_parts.include?(loc)
      end
      r_c = collection.find(fv.sample).first
      unless r_c.nil?
        fv.set(collection: collection, row: r_c[0], column: r_c[1])
      end
    end
  end
  
  # Provides instructions to cover plate
  #
  # @param collection [Collection]
  # @param rc_list [Array<[r,c]>] specify certain wells to cover
  def seal_plate(collection, rc_list: nil)
    show do
      title 'Seal Wells'
      note "Using an area seal carefully seal plate #{collection.id}"
      unless rc_list.nil?
        warning 'ONLY seal the highlighted wells'
        table highlight_collection_rc(collection, rc_list)
      end
    end
  end
end

library: {name: CollectionData, category: Collection Management}
code_source:
# CollectionData

needs 'Standard Libs/AssociationManagement'

# for managing data associations of collections
# and ensuring that samples/item data is handled correctly
module CollectionData
  include AssociationManagement
  include PartProvenance

  # Is this being used?
  # Associates data to every part in a plate
  #
  # @param plate [Collection] the collection
  # @param data [Anything] the data to be associated
  def associate_to_all(plate:, data:, key:)
    data_map = []
    parts.each do |part|
      loc = plate.find(part)
      loc[2] = data
      loc[3] = key
      data_map.push(loc)
    end
    associate_value_key_to_parts(plate: plate, data_map: data_map)
  end

  # Creates table for the data associated with key
  #
  # @param collection [Collection] the plate being used
  # @param keys [Array<String>] an array of keys that the data is
  #        associated with.
  # @return table of parts with data information

  def display_all_data(collection, keys)
    rc_list = []
    parts = collection.parts
    parts.each do |part|
      rc_list += collection.find(part)
    end
    display_data(collection, rc_list, keys)
  end

  # Associates data in data_map to parts in plate.
  #
  # @param plate [Collection] the plate containing the Items
  # @param data_map [Array<Array<row, column, value>, ...>] 
  #                                         determine where data goes
  # @param key [String] the key that
  def associate_value_to_parts(plate:, data_map:, key:)
    data_map.each do |loc_val_array|
      loc_val_array[3] = key
    end
    associate_value_key_to_parts(plate: plate, data_map: data_map)
  end

  # Creates a DataAssociation for each entry with Key :part_data and
  # Value "well" (saved as DataAssociation.object)
  # Each value is associated to its respective key
  #
  # @param plate [Collection] the plate that contains the parts (items)
  # @param data_map [Array<Array<r,c, value, key>, ...>] data map of all parts
  def associate_value_key_to_parts(plate:, data_map:)
    data_map.each do |key_value_map|
      part = plate.part(key_value_map[0], key_value_map[1])
      data_value = key_value_map[2]
      key = key_value_map[3]
      associate_data(part, key.to_sym, data_value) unless part.nil?
    end
  end

  # Adds data to list of coordinates
  # If there is already a data value present, the new data value will
  # either replace it, or be appended to it
  # based on the value of the append boolean
  #
  # @param coordinates [Array<Row(int), Column(int), Optional(String)] the
  #       coordinate list to be modified
  # @param data [String] string to be added to the list data
  # @param append: [Boolean] default true.  Replace if false
  def append_x_to_rcx(coordinates, data, append: true)
    data = data.to_s
    if coordinates[2].nil? || !append
      coordinates[2] = data
    else
      coordinates[2] += ', ' + data
    end
    coordinates
  end


  # Creates an array of samples that are the same in two different Collections
  #
  # @param collection_a [Collection] a collection
  # @param collection_b [Collection] a collection
  # @return [Array<Sample>]

  def find_like_samples(collection_a, collection_b)
    collection_a.parts.map!(&:sample) & collection_b.parts.map!(&:sample)
  end


  # Returns an array of parts in the Collection that match the right Sample
  #
  # @param collection [Collection] the Collection that the Item (part) is in
  # @param sample [Sample] the Sample searched for

  def parts_from_sample(collection, sample)
    part_location = collection.find(sample)
    parts = []
    part_location.each do |coordinates|
      parts.push(collection.part(coordinates[0], coordinates[1]))
    end
    parts
  end


  # Adds provenance history to to_object and from from_object
  #
  # @param from_obj [Item] object that provenance is coming from
  # @param to_obj [Item] the object that provenance is going to
  
  def from_obj_to_obj_provenance(to_obj, from_obj)
    raise "Object #{to_obj.id} is not an item" unless to_obj.is_a? Item
    raise "Object #{from_obj.id} is not an item" unless from_obj.is_a? Item

    from_obj_map = AssociationMap.new(from_obj)
    to_obj_map = AssociationMap.new(to_obj)
    add_provenance(from: from_obj, from_map: from_obj_map,
                   to: to_obj, to_map: to_obj_map)
    from_obj_map.save
    to_obj_map.save
  end
end

library: {name: CollectionDisplay, category: Collection Management}
code_source:
# Justin Vrana
#
# modified by:
# Cannon Mallory
# malloc3@uw.edu
#
# Modifications include:
# Optional Checkable boxes.  Additional Documentation

# Methods for displaying information about collections
module CollectionDisplay
  # Highlights all non-empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_non_empty(collection, check: true, &rc_block)
    highlight_collection_rc(collection, collection.get_non_empty,
                            check: check, &rc_block)
  end

  # Highlights all empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_empty(collection, check: true, &rc_block)
    highlight_collection_rcx(collection, collection.get_empty,
                            check: check, &rc_block)
  end

  # Highlights all non-empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_alpha_non_empty(collection, check: true, &rc_block)
    rcx = collection.get_non_empty
    rcx.each do |coor|
      coor.push(get_alpha(coor.first + 1) + (coor[1] + 1).to_s)
    end
    highlight_alpha_rcx(collection, rcx,
                       check: check, &rc_block)
  end

  # Highlights all empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_alpha_empty(collection, check: true, &rc_block)
    rcx = collection.get_empty
    rcx.each do |coor|
      coor.push(get_alpha(coor.first) + coor[1].to_s)
    end
    highlight_alpha_rc(collection, collection.get_empty,
                       check: check, &rc_block)
  end

  # Gets a list of the coordinates and alphanumeric locations
  #
  # @param collection [Collection] the collection that items are going to
  # @param samples [The samples that locations are wanted from]
  #
  # @return [Array<Array<row, column, location>] Coordinates and
  #      locations in same order as sample array
  def get_rcx_list(collection, samples)
    coordinates_and_data = []
    samples.each do |sample|
      sample_coordinates = get_items_coordinates(collection, [sample])
      sample_locations = get_alpha_num_location(collection, sample)

      sample_coordinates.each do |coordinates|
        raise "sample locations #{sample_locations[sample].class}"
        coordinates.push(sample_locations[sample]) # [0,0,A1]
        coordinates_and_data.push(coordinates)
      end
    end
    coordinates_and_data
  end

  # Highlights all cells listed in rc_list (CHANGED NAME)
  #
  # @param collection [Collection] the collection which should be highlighted
  # @param rc_list [Array] array of rc [[row,col],...]
  #                       row = int
  #                       col = int4
  # @param check [Boolean] Optional whether cells should be Checkable
  # @param &rc_block [Block] to determine rc list
  # @return [Table]
  def highlight_collection_rc(collection, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, '']
    }
    highlight_collection_rcx(collection, rcx_list, check: check)
  end

  # Highlights all cells in ROW/COLUMN/X
  #
  #
  # @param collection [Collection] the collection
  # @param rcx_list [Array] array of [[row, colum, x],...]
  #     row = int
  #     col = int
  #     x = string
  # @return [Table]
  def highlight_collection_rcx(collection, rcx_list, check: true)
    rows, columns = collection.dimensions
    table = create_collection_table(rows: rows, columns: columns, col_id: collection.id)
    highlight_rcx(table, rcx_list, check: check)
  end

  # Makes an alpha numerical display of collection wells listed in rc_list
  #
  # @param collection [Collection] the collection
  # @param rc_list [Array] Array of rows and columns [[row,col],...]
  # @param check [Boolean] Default True weather cells are checkable
  # @param &rc_block [Block] Optional tbd
  def highlight_alpha_rc(collection, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map do |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, get_alpha(r+1) + (c+1).to_s]
    end
    highlight_alpha_rcx(collection, rcx_list, check: check)
  end

  # Makes an alpha numerical display of collection wells listed in rcx_list
  #
  # @param collection [Collection] the collection
  # @param rc_list [Array] Array of rows and columns [[row,col,x],...]
  #         row,column are int, x is string
  # @param check [Boolean] Default True weather cells are checkable
  # @param &rc_block [Block] Optional tbd
  def highlight_alpha_rcx(collection, rcx_list, check: true)
    rows, columns = collection.dimensions
    tbl = create_collection_table(rows: rows, columns: columns, col_id: collection.id)
    rcx_list.each do |r, c, x|
      highlight_cell(tbl, r, c, x, check: check)
    end
    tbl
  end

  # Creates a table with the same dimensions as the input collection
  #
  # @param collection [Collection] the collection to be represented by the table
  # @param add_headers [Boolean] optional True
  # @return tab [Table] a table to be displayed
  def create_collection_table(rows:, columns:, col_id:)
    col_id = col_id.to_s.chars
    rows = rows + 1
    size = rows * columns
    slots = (1..size + rows + columns + 1).to_a
    tab = slots.each_slice(columns + 1).map do |row|
      row.map do
        { class: 'td-empty-slot' }
      end
    end

    #labels = Array(1...size + 1)
    tab.each_with_index do |row, row_idx|
      row.each_with_index do |col, col_idx|
        if row_idx == 0
          if col_idx == 0
            content = 'ID:'
          else
            content = col_id[col_idx-1]
          end
          col[:content] = 
            "<font color = 'black'> <b>#{content}</b> </font>"
        elsif row_idx == 1
          col[:content] = 
            "<font color = 'blue'> <b>#{col_idx}</b> </font>"
        elsif col_idx.zero?
          col[:content] = 
            "<font color = 'blue' <b>#{get_alpha(row_idx-1)}</b> </font>"
        else
          col[:content] = '-'
        end
      end
    end
    tab[1].first[:content] = '&#129514'
    tab
  end

  # converts numbers to alphabetical values (eg 1->A 27-AA etc)
  #
  # @param num [Integer] the integer to be converted
  def get_alpha(num)
    alpha26 = ('A'...'AA').to_a
    return "" if num < 1
    string = ""
    loop do
      num, r = (num-1).divmod(26)
      string.prepend(alpha26[r])
      break if num.zero?
    end
    string
  end

  # Highlights a specific location in a table (TODO TABLE CLASS)
  #
  # @param tbl [Table] the table which parts are being highlighted
  # @param row [Integer] the row
  # @param col [Integer] the column
  # @param id [String] what will be printed in the table
  #                    (TODO EMPTY STRING/DON'T REPLACE CONTENT)
  # @param check [Boolean] optional determines if cell is checkable or not
  def highlight_cell(tbl, row, col, id, check: true)
    tbl[row + 2][col + 1] = { content: id, class: 'td-filled-slot', check: check }
  end

  # Highlights all cells in ROW/COLUMN/X  (TODO TABLE CLASS)
  # X can be any string that is to be displayed in cell
  #
  # @param table [table] the table with cells to be highlighted
  # @param rcx_list [array] array of [[row, column, x],...]
  #     row = int
  #     col = int
  #     x = string
  # @return [table]
  def highlight_rcx(table, rcx_list, check: true)
    rcx_list.each do |rcx|
      rcx.push(check)
    end
    highlight_rcx_check(table, rcx_list)
    table
  end

  # Highlights all cells in ROW/COLUMN/X  (TODO TABLE CLASS)
  # X can be any string that is to be displayed in cell
  #
  # @param table [Table] the table with cells to be highlighted
  # @param rcx_check_list [Array] array of [[row, column, data, check],...]
  # @return [Table]
  def highlight_rcx_check(table, rcx_check_list)
    rcx_check_list.each do |row, column, data, check|
      highlight_cell(table, row, column, data, check: check)
    end
    table
  end

  # TODO: TABLE LIB
  # Highlights all cells listed in rc_list
  #
  # @param collection [Collection] the collection which should be highlighted
  # @param rc_list [Array] array of rc [[row,col],...]
  #                       row = int
  #                       col = int
  # @param check [Boolean] true if cells should be Checkable
  # @param &rc_block [Block] to determine rc list
  # @return [Table]
  def highlight_rc(table, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map do |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    end
    highlight_rcx(table, rcx_list, check: check)
  end

  # Highlights all slots in all collections in operation list
  #
  # @param ops [OperationList] Operation list
  # @param id_block [Block] Optional Unknown
  # @param check [Boolean] true if cells should be Checkable
  # @param &fv_block [Block] Optional Unknown
  # @return [Table]
  def highlight_collection(ops, id_block: nil, check: true, &fv_block)
    g = ops.group_by { |op| fv_block.call(op).collection }
    tables = g.map do |collection, grouped_ops|
      rcx_list = grouped_ops.map do |op|
        fv = fv_block.call(op)
        id = id_block.call(op) if id_block
        id ||= fv.sample.id
        [fv.row, fv.column, id]
      end
      tbl = highlight_collection_rcx(collection, rcx_list, check: check)
      [collection, tbl]
    end
    tables
  end

  # TODO: write highlight heat map method for table
  # Creates table illustrating data associated with keys
  #  for each part noted in rc_list
  #
  # @param collection [Collection] the collection
  # @param keys [Array<String>] an array of all keys that point to desired data
  # @param rc_list [Array<Array<row, col>...>] optional array of locations
  #        if not given will display all non_empty
  # @return table of parts with data information
  def display_data(collection, keys, rc_list: nil)
    if rc_list.nil?
      rc_list = collection.get_non_empty
    end
    rcx_array = []
    rc_list.each do |loc|
      data_string = ''
      keys.each_with_index do |key, idx|
        part = collection.part(loc[0], loc[1])
        data = get_associated_data(part, key).to_s
        unless data.nil?
          data_string += ', ' unless idx.zero?
          data_string += data
        end
      end
      loc.push(data_string)
      rcx_array.push(loc)
    end
    highlight_collection_rcx(collection, rcx_array, check: false)
  end

  # Displays all sample id's
  #
  # @param collection [Collection] the collection
  # @param rc_list [Array<r,c,>] optional if not then all existing parts
  # @param check [Boolean]
  # @return table
  def display_sample_id(collection, rc_list: nil, check: false, opts: {})
    rc_list = collection.get_non_empty if rc_list.nil?
    rcx_list = []
    rc_list.each do |r,c|
      part = collection.part(r, c)

      rcx_list.push([r, c, part.id]); next if opts[:part_id]

      rcx_list.push([r, c, part.sample.id])
    end
    highlight_collection_rcx(collection, rcx_list, check: check)
  end
end

library: {name: CollectionLocation, category: Collection Management}
code_source:
# frozen_string_literal: true

# Cannon Mallory
# malloc3@uw.edu
#
# Methods to facilitate sample management within collections
module CollectionLocation
  ALPHA26 = ('A'...'Z').to_a

  # Gets the location string of a sample in a collection
  #
  # @param collection [Collection] the collection containing the sample
  # @param sample [Sample] the Sample that you want to locate
  # @return [Hash{sample: location}] the Alpha Numeric location(s) e.g. A1, A2
  def get_alpha_num_location(collection, items)
    items = [items] unless items.is_a?(Array)

    hash_of_samples = {}
    items.each do |sample|
      coordinates = collection.find(sample)
      alpha_num_locations = []
      coordinates.each do |coordinate_set|
        alpha_num_locations << convert_coordinates_to_location(coordinate_set)
      end
      alpha_num_locations.join(',')
      hash_of_samples[sample] = alpha_num_locations
    end
    hash_of_samples
  end

  # Converts an array of coordinates to alpha numerical locations
  #
  # @param coordinates [Array<row,column>] set of coordinates
  # @return [String] alpha numerical location
  def convert_coordinates_to_location(coordinates)
    ALPHA26[coordinates[0]] + (coordinates[1] + 1).to_s
  end

  # Converts alpha numerical location to an Array of coordinates
  #
  # @param alpha [String] alpha numerical location
  # @return [Array<r,c>] array of row and column
  def convert_location_to_coordinates(alpha)
    alpha_characters = ''
    alpha.length.times do |idx|
      char = alpha[idx, idx+1]
      alpha_characters += char unless float(char).nil?
    end
    row = ALPHA26.find_index(alpha_characters)
    column = alpha[1..-1].to_i - 1
    [row, column]
  end

  # Finds the location coordinates of an multiple items/samples
  #
  # @param collection [Collection] the Collection containing the Item or Sample
  # @param items [Array<objects>] Item, Part, or Sample to be found
  # @return [Hash{sample: [row, column]}] 
  def get_items_coordinates(collection, items)
    hash_of_locations = {}
    items.each do |item|
      hash_of_locations[item] = collection.find(item)
    end
    hash_of_locations
  end

  # Finds a part from an alpha numerical string location(e.g. A1, B1)
  #  TODO Move to krill
  #
  # @param collection [Collection] the collection that contains the part
  # @param location [String] the location of the part within the collection
  # @return part [Item] the item at the given location
  def get_part(collection, location)
    row, column = convert_location_to_coordinates(location)
    collection.part(row, column)
  end
end

library: {name: CollectionTransfer, category: Collection Management}
code_source:
# Cannon Mallory
# malloc3@uw.edu
#
# Methods for transferring items into and out of collections

needs 'Standard Libs/Units'
needs 'Standard Libs/AssociationManagement'
needs 'Collection Management/CollectionLocation'
needs 'Collection Management/CollectionData'

module CollectionTransfer
  include Units
  include AssociationManagement
  include CollectionLocation
  include CollectionData

  VOL_TRANSFER = 'Volume Transferred'.to_sym

  def to_association_map(collection:, item:)
    association_map = []
    locations = collection.find(item)
    locations.each do |loc|
      association_map.push( { to_loc: loc } )
    end
    association_map
  end

  def from_association_map(collection:, item:)
    association_map = []
    locations = collection.find(item)
    locations.each do |loc|
      association_map.push( { from_loc: loc } )
    end
    association_map
  end

  # Direction to use multichannel pipettor to pipet from an item
  # into a collection
  #
  # @param to_collection [Collection]
  # @param source [String] the source of the media etc
  # @param volume [Volume] volume class volume being transferred
  # @param association_map [Array<{ to_loc: [row,col] }>] all the
  #        coordinate of where stuff is to go
  def multichannel_item_to_collection(to_collection:,
                                      source:,
                                      volume:,
                                      association_map:)
    pipettor = get_multi_channel_pipettor(volume: volume)
    channels = pipettor.channels
    association_map.each_slice(channels).each do |rc_slice|
      pipet_into_collection(to_collection: to_collection,
                            source: source,
                            pipettor: pipettor,
                            volume: volume,
                            association_map: rc_slice)
    end
  end

  # Direction to use single channel pipettor to pipet from an item
  # into a collection
  #
  # @param to_collection [Collection]
  # @param source [String] the source of the media etc
  # @param volume [Volume] volume class volume being transferred
  # @param association_map [Array<{ to_loc: [row,col] }>] all the
  #        coordinate of where stuff is to go
  def single_channel_item_to_collection(to_collection:,
                                        source:,
                                        volume:,
                                        association_map:)
    pipettor = get_single_channel_pipettor(volume: volume)
    pipet_into_collection(to_collection: to_collection,
                          source: source,
                          volume: volume,
                          association_map: association_map,
                          pipettor: pipettor)
  end

  # Direction to use single channel pipettor to pipet from
  # a collection into a collection
  #
  # @param to_collection [Collection]
  # @param from_collection [Collection]
  # @param volume [Volume] volume class volume being transferred
  # @param association_map [Array<{ to_loc: [row,col], from_loc: {row, col} }>]
  #     all the coordinate of where parts are
  def single_channel_collection_to_collection(to_collection:,
                                              from_collection:,
                                              volume:,
                                              association_map:)
    pipettor = get_single_channel_pipettor(volume)
    association_map.each do |loc_hash|
      pipet_collection_to_collection(to_collection: to_collection,
                                     from_collection: from_collection,
                                     pipettor: pipettor,
                                     volume: volume,
                                     association_map: [loc_hash])
    end
  end

  # Direction to use single channel pipettor to pipet from
  # a collection into a collection
  #
  # @param to_collection [Collection]
  # @param from_collection [Collection]
  # @param volume [Volume] volume class volume being transferred
  # @param association_map [Array<{ to_loc: [row,col], from_loc: {row, col} }>]
  #     all the coordinate of where parts are
  def multichannel_collection_to_collection(to_collection:,
                                            from_collection:,
                                            volume:,
                                            association_map:)
    pipettor = get_multichannel_pipettor(volume)
    association_map.slice(pipettor.channels).each do |map_slice|
      pipet_collection_to_collection(to_collection: to_collection,
                                     from_collection: from_collection,
                                     pipettor: pipettor,
                                     volume: volume,
                                     association_map: map_slice)
    end
  end

  # Directions to use pipet to transfer from a collection to a collection
  #
  # @param to_collection [Collection]
  # @param from_collection [Collection]
  # @param volume [Volume] volume class volume being transferred
  # @param association_map [Array<{ to_loc: [row,col], from_loc: {row, col} }>]
  #     all the coordinate of where parts are
  # @param pipettor [Pipettor] the pipettor to be used
  def pipet_collection_to_collection(to_collection:,
                                     from_collection:,
                                     pipettor:,
                                     volume:,
                                     association_map:)
    to_rc_list = []
    from_rc_list = []
    association_map.each do |loc_hash|
      to_rc_list.push(loc_hash[:to_loc])
      from_rc_list.push(loc_hash[:from_loc])
    end
    show do
      title 'Pipet from Collection to Collection'
      note pipettor.pipet(volume: volume,
                          source: to_collection.id,
                          destination: "<b>#{to_collection.id}</b> as noted below}")
      table highlight_collection_rc(to_collection, to_rc_list) { |r, c|
        convert_coordinates_to_location([r, c])
      }
      table highlight_collection_rc(from_collection, from_rc_list) { |r, c|
        convert_coordinates_to_location([r, c])
      }
    end
  end

  def pipet_into_collection(to_collection:,
                            source:,
                            pipettor:,
                            volume:,
                            association_map:)
    rc_list = association_map.map { |hash| hash[:to_loc] }
    show do
      title "Pipet from #{source} to Collection"
      note pipettor.pipet(volume: volume,
                          source: source,
                          destination: "<b>#{to_collection.id}</b> noted below")
      table highlight_collection_rc(to_collection, rc_list) { |r, c|
        convert_coordinates_to_location([r, c])
      }
    end
  end

  # Instructions to tech to relabel plate
  #
  # @param from_collection [Collection]
  # @param to_collection [Collection]
  def relabel_plate(from_collection:, to_collection:)
    show do
      title 'Rename Plate'
      note "Relabel plate <b>#{from_collection.id}</b> with
                        <b>#{to_collection.id}</b>"
    end
  end

  # Transfers items from one collection to another per the association map
  #
  # @param from_collection [Collection]
  # @param to_collection [Collection]
  # @param association_map [Array<{ to_loc: [r,c], from_loc: [r,c] }]
  # @param transfer_vol [{qty: int, units: string}]
  def transfer_from_collection_to_collection(from_collection:,
                                             to_collection:,
                                             association_map:,
                                             transfer_vol: nil)
    association_map.each do |loc_hash|
      to_loc = loc_hash[:to_loc]
      from_loc = loc_hash[:from_loc]

      from_part = from_collection.part(from_loc[0], from_loc[1])
      to_collection.set(to_loc[0], to_loc[1], from_part)
    end
    associate_transfer_collection_to_collection(from_collection: from_collection,
                                                to_collection: to_collection,
                                                association_map: association_map,
                                                transfer_vol: transfer_vol)
  end

  # Transfers from item to well in collection
  #
  # @param from_item [item]
  # @param to_collection [Collection]
  # @param association_map [Array<{ to_loc: [r,c], from_loc: [r,c] }]
  # @param transfer_vol [{qty: int, units: string}]
  def transfer_from_item_to_collection(from_item:,
                                       to_collection:,
                                       association_map:,
                                       transfer_vol: nil)
    association_map.each do |loc_hash|
      to_loc = loc_hash[:to_loc]
      to_collection.set(to_loc[0], to_loc[1], from_item)
    end
    associate_transfer_item_to_collection(from_item: from_item,
                                          to_collection: to_collection,
                                          association_map: association_map,
                                          transfer_vol: transfer_vol)
  end

  # Associates/adds provenance for a transfer from a collection to
  # a collection.   It does NOT replace the item in the 'to_collection'
  #
  # @param from_collection [Collection]
  # @param to_collection [Collection]
  # @param association_map [Array<{ to_loc: [r,c], from_loc: [r,c] }]
  # @param transfer_vol [{qty: int, units: string}]
  def associate_transfer_collection_to_collection(from_collection:,
                                                  to_collection:,
                                                  association_map:,
                                                  transfer_vol: nil)
    association_map.each do |loc_hash|
      from_part = from_collection.part(loc_hash[:from_loc][0],
                                       loc_hash[:from_loc][1])
      to_part = to_collection.part(loc_hash[:to_loc][0],
                                   loc_hash[:to_loc][1])
      unless transfer_vol.nil?
        associate_transfer_vol(transfer_vol, VOL_TRANSFER, to_part: to_part,
                                                           from_part: from_part)
      end
      from_obj_to_obj_provenance(to_part, from_part)
    end
  end

  # Associates/adds provenance for a transfer from an item to
  # a collection.   It does NOT replace the item in the 'to_collection'
  #
  # @param from_Item [item]
  # @param to_collection [Collection]
  # @param association_map [Array<{ to_loc: [r,c], from_loc: [r,c] }]
  # @param transfer_vol [{qty: int, units: string}]
  def associate_transfer_item_to_collection(from_item:,
                                            to_collection:,
                                            association_map:,
                                            transfer_vol: nil)
    association_map.each do |loc_hash|
      to_part = to_collection.part(loc_hash[:to_loc][0],
                                   loc_hash[:to_loc][1])
      unless transfer_vol.nil?
        associate_transfer_vol(transfer_vol, VOL_TRANSFER, to_part: to_part,
                                                           from_part: from_item)
      end
      from_obj_to_obj_provenance(to_part, from_item)
    end
  end

  # Associates/adds provenance for a transfer from a collection to
  # an item.
  #
  # @param from_collection [Collection]
  # @param to_item [item]
  # @param association_map [Array<{ to_loc: [r,c], from_loc: [r,c] }]
  # @param transfer_vol [{qty: int, units: string}]
  def associate_transfer_collection_to_item(from_collection:,
                                            to_item:,
                                            association_map:,
                                            transfer_vol: nil)
    association_map.each do |loc_hash|
      from_part = from_collection.part(loc_hash[:from_loc][0],
                                       loc_hash[:from_loc][1])
      unless transfer_vol.nil?
        associate_transfer_vol(transfer_vol, VOL_TRANSFER, to_part: to_item,
                                                           from_part: from_part)
      end
      from_obj_to_obj_provenance(to_item, from_part)
    end
  end

  # Records the volume transferred
  #
  # @param transfer_vol [{qty: int, units: string}]
  # @param to_part: part that is being transferred to
  # @param from_part: part that is being transferred from
  def associate_transfer_vol(vol, key, to_part:, from_part:)
    vol_transfer_array = get_associated_data(to_part, key)
    vol_transfer_array = [] if vol_transfer_array.nil?
    vol_transfer_array.push([from_part.id, vol])
    associate_data(to_part, key, vol_transfer_array)
  end

  # Creates a one to one association map
  #
  # @param to_collection [Collection] the to collection
  # @param from_collection [Collection] the from collection
  def one_to_one_association_map(to_collection:, from_collection: nil)
    rows, cols = to_collection.dimensions
    association_map = []
    rows.times do |row|
      cols.times do |col|
        next unless from_collection.nil? || !from_collection.part(row, col).nil?

        loc = [row, col]
        association_map.push({ to_loc: loc, from_loc: loc })
      end
    end
    association_map
  end
end
