config:
  title: Aquarium Microtiter Plates
  description: Models for working with microtiter plates
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  github: {user: dvnstrcklnd, repo: aq-microtiter-plates}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: MicrotiterPlate, category: Microtiter Plates}
code_source:
module MicrotiterPlate
  # Convert a letter to the corresponding array index
  #
  # @param letter [String] the letter (usually of a row)
  # @return Fixnum
  def letter_to_index(letter)
    alphabet_array.index(letter.upcase)
  end

  # Convert an array index to the corresponding letter of the alphabet
  #
  # @param index [Fixnum] the index (usually of a row)
  # @return String
  def index_to_letter(index)
    alphabet_array[index]
  end

  # Array of all letters of the alphablet in uppercase
  #
  # @return Array<String>
  def alphabet_array
    ('A'..'Z').to_a
  end

  # Get the alpha component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [String, nil] the first contiguous run of letters or nil if no
  #   letters are found
  def alpha_component(alphanum)
    mtch = alphanum.match(/[[:alpha:]]+/)
    return mtch[0] if mtch
  end

  # Get the numeric component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [Fixnum, nil] the first contiguous run of digits or nil if no
  #   digits are found
  def numeric_component(alphanum)
    mtch = alphanum.match(/\d+/)
    return mtch[0].to_i if mtch
  end
end

library: {name: PlateLayoutGenerator, category: Microtiter Plates}
code_source:
# frozen_string_literal: true

# Factory class for instantiating `PlateLayoutGenerator`
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGeneratorFactory
  # Instantiates `PlateLayoutGenerator`
  #
  # @param group_size [FixNum] the size of groups of wells, e.g., correspinding
  #   to replicates
  # @return [PlateLayoutGenerator]
  def self.build(group_size: 1)
    PlateLayoutGenerator.new(group_size: group_size)
  end
end

# Provides individual indices or batches of indices from a microtiter plate, in
#   order from top left ,and yielding each index only once
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGenerator
  def initialize(group_size: 1)
    @group_size = group_size
    @layout = cdc_layout
  end

  def next(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i)
  end

  def next_group(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i, @group_size)
  end

  private

  def first_index_in(column)
    @layout.index { |x| x[1] == column }
  end

  def cdc_layout
    lyt = []
    [0, 4].each do |j|
      cols = Array.new(12) { |c| c }
      cols.each { |c| @group_size.times { |i| lyt << [i + j, c] } }
    end
    lyt
  end
end
