config:
  title: Aquarium PCR Models
  description: Libraries to model PCR composition and program, and help with master mixes
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: dvn.strcklnd@gmail.com}
  github: {user: dvnstrcklnd, repo: aq-pcr-models}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: MasterMixHelper, category: PCR Libs}
code_source:
needs "Standard Libs/Units"
needs "Standard Libs/CommonInputOutputNames"

# Contains methods for assembling and dispensing master mixes
# @author Devin Strickland <strcklnd@uw.edu>
module MasterMixHelper

    include CommonInputOutputNames
    include Units

    # TODO: Get this out of here.
    TEST = "TEST"

    # Group operations by multiple inputs
    # @todo Make the grouped Operations be OperationLists
    #
    # @param input_names [Array<String>] names of inputs to be included in grouping
    # @param ops [OperationList, Array<Operation>] operations to be grouped
    # @return [Array(Array<String>, Hash{Array<FixNum> => Array<Operation>})] the input IDs
    #   with singletons eliminated, followed by the grouped operations
    def group_ops_by_inputs(input_names:, ops:)
        input_names = eliminate_singletons(input_names: input_names, ops: ops)
        grouped_ops = ops.group_by { |op| input_item_id_array(input_names: input_names, op: op) }
        [input_names, grouped_ops]
    end

    # Remove input names from the list where each operation is a different input item
    #
    # @param input_names [Array<String>] input names to be tested and, if appropriate, eliminated
    # @param ops [OperationList, Array<Operation>] operations
    # @return [Array<String>] the input names with singletons eliminated
    def eliminate_singletons(input_names:, ops:)
        input_names.reject { |n| singletons?(input_name: n, ops: ops) }
    end

    # Tests whether each operation has a different item for a given input name and
    #   returns true if each is different
    #
    # @param input_name [String] input name to be tested
    # @param ops [OperationList, Array<Operation>] operations
    # @return [Boolean]
    def singletons?(input_name:, ops:)
        ops.map { |op| item_id(input_name: input_name, op: op) }.uniq.length == ops.length
    end

    # Gets the ID for the Item or Part specified by a given input name
    #
    # @param input_name [String] input name to be tested
    # @param op [Operation]
    # @return [FixNum] the Item or Part ID
    def item_id(input_name:, op:)
        fv = op.input(input_name)
        fv.part.try(:id) || fv.item.id
    end

    # Maps Item IDs for a given list of input names and a given operation
    #
    # @param input_names [Array<String>] input names to be mapped
    # @param op [Operation]
    # @return [Array<FixNum>]
    def input_item_id_array(input_names:, op:)
        input_names.map { |n| op.input(n).child_item_id }
    end

    # Makes master mix(es) for a set of operations
    # Assumes that all operations have the same PCR program
    #
    # @param grouped_ops [Hash{Array<FixNum> => Array<Operation>}] hash of operations
    #   grouped by input IDs
    # @param input_names [Array<String>] input names corresponding to grouped_ops keys
    # @param composition [PCRComposition]
    # @param mult [Float] Amount to multiply each component volume by to account for
    #   pipetting error
    # @return [Hash{String => Array<Operation>}] hash of operations grouped by tube labels
    def make_master_mixes(grouped_ops:, input_names:, composition:, mult: 1.0)
        ops_by_master_mix = {}

        grouped_ops.each_with_index do |(inputs, ops), i|
            mm_tube_label = "MM#{i+1}"
            this_mult = mult * ops.length

            master_mix_table = master_mix_table(
                inputs: inputs,
                input_names: input_names,
                composition: composition,
                mult: this_mult
            )

            show do
                title "Make Master Mix #{mm_tube_label}"

                check "Get a 1.5mL tube and label it <b>#{mm_tube_label}</b>."
                note "Add reaction components as indicated:"
                table master_mix_table
            end

            ops_by_master_mix[mm_tube_label] = ops
        end

        show do
            title "Vortex and Spin Down"

            check "Vortex the master mix tubes briefly and spin down"
        end

        ops_by_master_mix
    end

    # Build table for volumes of master mix components
    #
    # @param inputs [Array<FixNum>] input item IDs
    # @param input_names [Array<String>] input names
    # @param composition [PCRComposition]
    # @param mult [Float] Amount to multiply each component volume by to account for
    #   pipetting error
    # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
    def master_mix_table(inputs:, input_names:, composition:, mult:)
        header = [
            "#{composition.polymerase.display_name} #{composition.polymerase.item}",
            "#{composition.dye.display_name} #{composition.dye.item}",
            composition.water.display_name
        ]

        row = [
            composition.polymerase.add_in_table(mult),
            composition.dye.add_in_table(mult),
            composition.water.add_in_table(mult)
        ]

        input_names.each_with_index do |input_name, i|
            header << "#{input_name} #{inputs[i]}"
            row << composition.input(input_name).add_in_table(mult)
        end

        [header, row].transpose
    end

    # Dispenses master mixes for PCR
    # Assumes all operations in ops_by_master_mix hash are from the same program
    #
    # @param output_name [String] output name
    # @param ops_by_master_mix [Hash{String => Array<Operation>}] hash of operations
    #   grouped by tube labels
    # @param composition [PCRComposition]
    def dispense_master_mix(output_name:, ops_by_master_mix:, composition:, mult: 1.0)
        coll = ops_by_master_mix.values.first.first.output(output_name).collection
        coll_display = "#{coll}-#{TEST}"

        mm_vol = composition.sum_added_components * mult
        divide = composition.volume * mult > 100

        if divide
            ops = ops_by_master_mix.values.flatten
            labels = ops.map { |op| coll_id_display(op, output_name, role="output", hide_id=true) }
            show do
                title "Divide Master Mix"

                note "Get #{ops.length} 1.5 ml microfuge tubes and label them"\
                     " #{labels.to_sentence}"
            end
        end

        destination = divide ? "microfuge tube" : "#{coll_display} position"

        master_mix_table = []
        master_mix_table[0] = [
            "MM tube",
            destination
        ]

        ops_by_master_mix.each do |master_mix, ops|
            ops.each do |op|
                pos = coll_id_display(op, output_name, role="output", hide_id=true)
                row = [
                    master_mix,
                    { content: pos, check: true }
                ]
                master_mix_table.append(row)
            end
        end

        show do
            title "Dispense Master Mix"
            note "Dispense #{mm_vol} #{MICROLITERS} of each master mix"\
                 " into the indicated <b>#{destination}</b>"
            table master_mix_table
        end
    end

    # Dispenses a component
    #
    # @param input_name [String] input name of component
    # @param output_name [String] output name
    # @param ops [OperationList, Array<Operation>] operations
    # @param composition [PCRComposition]
    # @param mult [Float] Amount to multiply each component volume by to account for
    #   pipetting error
    def dispense_component(input_name:, output_name:, ops:, composition:, mult: 1.0)
        coll = ops.first.output(output_name).collection
        coll_display = "#{coll}-#{TEST}"

        component = composition.input(input_name)
        comp_vol = component.adjusted_qty(mult=mult, round=1, checkable=false)

        divide = composition.volume * mult > 100
        destination = divide ? "microfuge tube" : "#{coll_display} position"

        uniq_inputs = ops.map { |op| op.input(input_name).item }.uniq
        if uniq_inputs.length == 1
            from_header = "#{uniq_inputs.first} position"
            hide_input_id = true
        else
            from_header = "#{input_name} ID"
            hide_input_id = false
        end

        dispense_table = []
        dispense_table[0] = [
            from_header,
            destination
        ]

        ops.each do |op|
            from_pos = coll_id_display(op, input_name, role="input", hide_id=hide_input_id)
            to_pos = coll_id_display(op, output_name, role="output", hide_id=true)
            row = [from_pos, { content: to_pos, check: true }]
            dispense_table.append(row)
        end

        show do
            title "Dispense #{input_name.pluralize}"
            
            if input_name.pluralize == "Templates" 
                
                check "Dispense #{comp_vol} #{MICROLITERS} of each template in the indicated <b>#{destination}</b> and close cap for each well after template is added"
                table dispense_table
                note "Vortex and spin down test stripwells"
                
            else 
                
                check "Dispense #{comp_vol} #{MICROLITERS} of each #{input_name}"\
                      " into the indicated <b>#{destination}</b>"
                table dispense_table
                
            end
        end
    end

end

library: {name: PCRComposition, category: PCR Libs}
code_source:
needs "Standard Libs/Units"
needs "Standard Libs/CommonInputOutputNames"

# Models the composition of a polymerase chain reaction
# @author Devin Strickland <strcklnd@uw.edu>
# @note As much as possible, Protocols using this class should drawn input names from `CommonInputOutputNames`
class PCRComposition

    include CommonInputOutputNames, Units

    POLYMERASE = "Polymerase"
    POLYMERASE_SAMPLE = "Kapa HF Master Mix"
    POLYMERASE_OBJECT = "Enzyme Stock"
    DYE = "Dye"
    DYE_SAMPLE = "Eva Green"
    DYE_OBJECT = "Screw Cap Tube"
    WATER = "Molecular Grade Water"

    COMPONENTS = {
        "qPCR1" => {
            polymerase:     {input_name: POLYMERASE,        qty: 16,    units: MICROLITERS},
            forward_primer: {input_name: FORWARD_PRIMER,    qty: 0.16,  units: MICROLITERS},
            reverse_primer: {input_name: REVERSE_PRIMER,    qty: 0.16,  units: MICROLITERS},
            dye:            {input_name: DYE,               qty: 1.6,   units: MICROLITERS},
            water:          {input_name: WATER,             qty: 6.58,  units: MICROLITERS},
            template:       {input_name: TEMPLATE,          qty: 7.5,   units: MICROLITERS}
        },

        # qPCR2: 2nd qPCR in NGS prep. reverse primer is indexed primer.
        "qPCR2" => {
            polymerase:     {input_name: POLYMERASE,        qty: 25,    units: MICROLITERS},
            forward_primer: {input_name: FORWARD_PRIMER,    qty: 2.5,   units: MICROLITERS},
            reverse_primer: {input_name: REVERSE_PRIMER,    qty: 2.5,   units: MICROLITERS},
            dye:            {input_name: DYE,               qty: 2.5,   units: MICROLITERS},
            water:          {input_name: WATER,             qty: 15.5,  units: MICROLITERS},
            template:       {input_name: TEMPLATE,          qty: 2,     units: MICROLITERS}
        },

        # LIBqPCR1: 1st qPCR in Libray prep. if sublibrary primers exist they are used here.
        "lib_qPCR1" => {
            polymerase:     {input_name: POLYMERASE,        qty: 12.5,  units: MICROLITERS},
            forward_primer: {input_name: FORWARD_PRIMER,    qty: 0.75,  units: MICROLITERS},
            reverse_primer: {input_name: REVERSE_PRIMER,    qty: 0.75,  units: MICROLITERS},
            dye:            {input_name: DYE,               qty: 1.25,  units: MICROLITERS},
            water:          {input_name: WATER,             qty: 8.75,  units: MICROLITERS},
            template:       {input_name: TEMPLATE,          qty: 1,     units: MICROLITERS}
        },

        # LIBqPCR2: 2nd qPCR in Libray prep. overhangs compatible with cloning vector are added here.
        "lib_qPCR2" => {
            polymerase:     {input_name: POLYMERASE,        qty: 25,    units: MICROLITERS},
            forward_primer: {input_name: FORWARD_PRIMER,    qty: 1.5,   units: MICROLITERS},
            reverse_primer: {input_name: REVERSE_PRIMER,    qty: 1.5,   units: MICROLITERS},
            dye:            {input_name: DYE,               qty: 2.5,   units: MICROLITERS},
            water:          {input_name: WATER,             qty: 17.5,  units: MICROLITERS},
            template:       {input_name: TEMPLATE,          qty: 2,     units: MICROLITERS}
        },
    }

    attr_accessor :components

    # Instantiates the class
    # Either `component_data` or `program_name` must be passed
    #
    # @param components [Hash] a hash enumerating the components
    # @param program_name [String] a key specifying one of the default component hashes
    def initialize(component_data: nil, program_name: nil)
        if component_data.blank? && program_name.blank?
            raise "Unable to initialize PCRComposition. Either `component_data` or `program_name` is required."
        elsif program_name.present?
            component_data = PCRComposition::COMPONENTS[program_name]
        end

        component_data[:dye] = default_dye.merge(component_data[:dye])
        component_data[:polymerase] = default_polymerase.merge(component_data[:polymerase])

        @components = []
        component_data.each { |k,c| components.append(ReactionComponent.new(c)) }
    end

    # Provides default Sample and ObjectType for polymerase
    # @private
    # @return [Hash]
    def default_polymerase
        {
            sample_name: POLYMERASE_SAMPLE,
            object_name: POLYMERASE_OBJECT
        }
    end

    # Provides default Sample and ObjectType for dye
    # @private
    # @return [Hash]
    def default_dye
        {
            sample_name: DYE_SAMPLE,
            object_name: DYE_OBJECT
        }
    end

    # Specifications for the dye component
    # @return (see #input)
    def dye
        input(DYE)
    end

    # Specifications for the polymerase component
    # @return (see #input)
    def polymerase
        input(POLYMERASE)
    end

    # Specifications for the forward primer component
    # @return (see #input)
    def forward_primer
        input(FORWARD_PRIMER)
    end

    # Specifications for the reverse primer component
    # @return (see #input)
    def reverse_primer
        input(REVERSE_PRIMER)
    end

    # Specifications for the template component
    # @return [ReactionComponent]
    def template
        input(TEMPLATE)
    end

    # Specifications for the water component
    # @return (see #input)
    def water
        input(WATER)
    end

    # Retrieves components by input name
    # Generally the named methods should be used.
    # However, this method can be convenient in loops, especially when
    #   the Protocol draws input names from `CommonInputOutputNames`
    #
    # @param input_name [String] the name of the component to be retrieved
    # @return [ReactionComponent]
    def input(input_name)
        components.find { |c| c.input_name == input_name }
    end

    # Displays the total reaction volume with units
    #
    # @todo Make this work better with units other than microliters
    # @return [String]
    def qty_display
        Units.qty_display({ qty: volume, units: MICROLITERS })
    end

    # The total reaction volume
    # @note Rounds to one decimal place
    # @return [Float]
    def volume
        sum_components
    end

    # The total reaction volume
    # @param round [Fixnum] the number of decimal places to round to
    # @return [Float]
    def sum_components(round=1)
        components.map{ |c| c.qty }.reduce(:+).round(round)
    end

    # The total volume of all components that have been added
    # @param (see #sum_components)
    # @return (see #sum_components)
    def sum_added_components(round=1)
        added_components.map{ |c| c.qty }.reduce(:+).round(round)
    end

    # Gets the components that have been added
    # @return [Array<ReactionComponent>]
    def added_components
        components.select { |c| c.added? }
    end
end

# Models a component of a biochemical reaction
# @author Devin Strickland <strcklnd@uw.edu>
class ReactionComponent

    include Units

    attr_reader :input_name, :qty, :units, :sample, :item
    attr_accessor :added

    # Instantiates the class
    #
    # @param input_name [String] the name of the component
    # @param qty [Numeric] the quantity of this component to be added to a single reaction
    # @param units [String] the units of `qty`
    # @param sample_name [String] the name of the Aquarium Sample to be used for this component
    # @param object_name [String] the ObjectType (Container) that this component should be found in
    def initialize(input_name:, qty:, units:, sample_name: nil, object_name: nil)
        @input_name = input_name
        @qty = qty
        @units = units
        @sample = sample_name ? Sample.find_by_name(sample_name) : nil

        if sample && object_name
            @item = sample.in(object_name).first
        else
            @item = nil
        end

        @added = false
    end

    # The input name, formatted for display in protocols
    # @return [String]
    def display_name
        input_name
    end

    # Displays the volume (`qty`) with units
    #
    # @return [String]
    def qty_display(round=1)
        Units.qty_display({ qty: qty.round(round), units: units })
    end

    # Adjusts the qty by a given factor and, if needed, makes it checkable in a table
    #
    # @param mult [Float] the factor to multiply `qty` by
    # @param round [FixNum] the number of places to round the result to
    # @param checkable [Boolean] whether to make the result checkable in a table
    # @return [Numeric, Hash]
    def adjusted_qty(mult=1.0, round=1, checkable=true)
        adj_qty = (qty * mult).round(round)
        adj_qty = {content: adj_qty, check: true} if checkable
        adj_qty
    end

    # provides the `qty` for display in a table, and markes it as `added`
    #
    # @param (see #adjusted_qty)
    # @return (see #adjusted_qty)
    def add_in_table(mult=1.0, round=1, checkable=true)
        @added = true
        adjusted_qty(mult, round, checkable)
    end

    # Checks if `self` has been added
    # @return [Boolean]
    def added?
        added
    end
end

library: {name: PCRProgram, category: PCR Libs}
code_source:
needs "Standard Libs/Units"
needs "Standard Libs/CommonInputOutputNames"

class PCRProgram

    include CommonInputOutputNames, Units

    FINAL_STEP = "12C (in final step of program)"

    PROGRAMS = {
        "qPCR1" => {
            name: "NGS_qPCR1.prcl", volume: 32, plate: "NGS_qPCR1.pltd",
            steps: {
                step1: {temp: {qty: 95, units: DEGREES_C}, time: {qty:  3, units: MINUTES}},
                step2: {temp: {qty: 98, units: DEGREES_C}, time: {qty: 15, units: SECONDS}},
                step3: {temp: {qty: 62, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step4: {temp: {qty: 72, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step5: {goto: 2, times: 34},
                # step6: {temp: {qty: 72, units: DEGREES_C}, time: {qty:  5, units: MINUTES}},
                step6: {temp: {qty: 12, units: DEGREES_C}, time: {qty: "forever", units: ""}}
            }
        },

        "qPCR2" => {
            name: "NGS_qPCR2", volume: 50, plate: "NGS_qPCR1.pltd",
            steps: {
                step1: {temp: {qty: 98, units: DEGREES_C}, time: {qty:  3, units: MINUTES}},
                step2: {temp: {qty: 98, units: DEGREES_C}, time: {qty: 15, units: SECONDS}},
                step3: {temp: {qty: 64, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step4: {temp: {qty: 72, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step5: {goto: 2, times: 29},
                step6: {temp: {qty: 72, units: DEGREES_C}, time: {qty:  5, units: MINUTES}},
                step7: {temp: {qty: 12, units: DEGREES_C}, time: {qty: "forever", units: ""}}
            }
        },

        "lib_qPCR1" => {
            name: "LIB_qPCR1.prcl", volume: 25, plate: "LIB_qPCR.pltd",
            steps: {
                step1: {temp: {qty: 95, units: DEGREES_C}, time: {qty:  3, units: MINUTES}},
                step2: {temp: {qty: 98, units: DEGREES_C}, time: {qty: 15, units: SECONDS}},
                step3: {temp: {qty: 65, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step4: {temp: {qty: 72, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step5: {goto: 2, times: 34},
                step6: {temp: {qty: 72, units: DEGREES_C}, time: {qty:  5, units: MINUTES}},
                step7: {temp: {qty: 12, units: DEGREES_C}, time: {qty: "forever", units: ""}}
            }
        },

        "lib_qPCR2" => {
            name: "LIB_qPCR2.prcl", volume: 50, plate: "LIB_qPCR.pltd",
            steps: {
                step1: {temp: {qty: 95, units: DEGREES_C}, time: {qty:  3, units: MINUTES}},
                step2: {temp: {qty: 98, units: DEGREES_C}, time: {qty: 15, units: SECONDS}},
                step3: {temp: {qty: 65, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step4: {temp: {qty: 72, units: DEGREES_C}, time: {qty: 30, units: SECONDS}},
                step5: {goto: 2, times: 34},
                step6: {temp: {qty: 72, units: DEGREES_C}, time: {qty:  5, units: MINUTES}},
                step7: {temp: {qty: 12, units: DEGREES_C}, time: {qty: "forever", units: ""}}
            }
        }
    }

    attr_reader :program_name, :name, :plate, :steps, :volume

    def initialize(args={})
        @program_name = args[:program_name]
        program = PCRProgram::PROGRAMS[program_name]
        @name = program[:name]
        @plate = program[:plate]
        @steps = {}
        program[:steps].each { |k,v| @steps[k] = PCRStep.new(v) }
        @volume = args[:volume] || program[:volume]
    end

    def table
        table = []
        steps.each do |k,v|
            row = ["#{k}"]
            if v.incubation?
                row += [v.temperature_display, v.duration_display]
            elsif v.goto?
                row += [v.goto_display, v.times_display]
            else
                raise "Unable to interpret #{v} as a PCRStep"
            end
            table.append(row)
        end
        table
    end

    def final_step
        FINAL_STEP
    end
end

class PCRStep
    attr_reader :temperature, :duration, :goto, :times

    def initialize(args={})
        @temperature = args[:temp]
        @duration = args[:time]
        @goto = args[:goto]
        @times = args[:times]
    end

    def incubation?
        temperature && duration
    end

    def goto?
        goto && times
    end

    def temperature_display
        Units.qty_display(temperature)
    end

    def duration_display
        Units.qty_display(duration)
    end

    def goto_display
        "goto step #{goto}"
    end

    def times_display
        "#{times} times"
    end
end

library: {name: CommonInputOutputNames, category: Standard Libs}
code_source:
module CommonInputOutputNames

    INPUT_YEAST = 'Yeast Culture'
    OUTPUT_YEAST = 'Yeast Culture'
    MEDIA = 'Media'
    DNA = 'DNA'
    
    INPUT_SAMPLE = 'Input Sample'
    OUTPUT_SAMPLE = 'Output Sample'

    FORWARD_PRIMER = 'Forward Primer'
    REVERSE_PRIMER = 'Reverse Primer'
    TEMPLATE = 'Template'
    FRAGMENT = 'Fragment'
    PROGRAM = 'Program'
    PRIMER_PLATE = '96-Well Primer Aliquot Plate'

end

library: {name: Units, category: Standard Libs}
code_source:
module Units
    
    EMPTY = -1
    
    # Volume
    MICROLITERS = 'µl'
    MILLILITERS = 'ml'
    
    # Weight
    NANOGRAMS = 'ng'
    MICROGRAMS = 'µg'
    
    # Concentration
    PICOMOLAR = 'pM'
    NANOMOLAR = 'nM'
    MICROMOLAR = 'µM'
    MILLIMOLAR = 'mM'
    MOLAR = 'M'
    
    # Temperature
    DEGREES_C = '°C'
    
    # Time
    MINUTES = 'min'
    SECONDS = 'sec'
    HOURS ='hr'
    # Force
    TIMES_G = 'x g'
    
    # R/DNA Length
    BASEPAIRS = 'bp'
    KILOBASEPAIRS = 'kbp'
    MEGABASEPAIRS = 'mbp'
    GIGABASEPAIRS = 'gbp'
    
    # Voltage
    VOLTS = 'V'

    def self.qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def add_qty_display(options)
        new_items = {}
        
        options.each do |key, value|
            key =~ /^(.+_)+([a-z]+)$/
            
            case $2
            when 'microliters'
                units = MICROLITERS
            when 'milliliters'
                units = MILLILITERS
            when 'minutes'
                units = MINUTES
            else
                next
            end
            
            qty = value.to_f
            
            new_items["#{$1}qty".to_sym] = { qty: qty, units: units }
        end
        
        options.update(new_items)
    end
    
    # Return the unit constant for the the unit name if there is one.
    #
    # @param unit_name [String] the name of the unit
    # @returns the value of the constant with the given name
    # @raises BadUnitNameError if the name is not the name of a defined unit
    def self.get_unit(unit_name:)
        self.const_get(unit_name.upcase)
      rescue
        raise BadUnitNameError.new(name: unit_name)
    end
    
    # Exception class for bad unit name arguments to Units::get_unit.
    #
    # @attr_reader [String] name  the bad unit name
    class BadUnitNameError < StandardError
        attr_reader :name
        
        def initialize(msg: "Unknown unit name", name:)
            @name = name
            super(msg)
        end
    end
    
    # Return a key for the measure hash defined on the given object type.
    #
    # The measure hash must be defined in the data proerty of the object type as JSON.
    # For instance
    #
    #   { "measure": { "type": "concentration", "unit": "micromolar" } }
    #
    # The key is constructed as the type name, an underscore, and the unit name.
    #
    # @param object_type [ObjectType] the object type
    # @returns the key for the measure of the the object type if there is one
    # @raises MissingObjectTypeMeasure if the object type has no measure data_object
    def self.get_measure_key(object_type:)
        data_object = object_type.data_object
        raise MissingObjectTypeMeasureError.new(name: object_type.name) if !data_object.key?(:measure)
        
        measure = object_type.data_object[:measure]
        type_name = measure[:type]
        unit_name = measure[:unit]
        "#{type_name}_#{self.get_unit(unit_name: unit_name)}"
    end
    
    # Exception class for an object type with out a measure hash definition.
    #
    # @attr_reader [String] name  the name of the object type where measure has was expected
    class MissingObjectTypeMeasureError < StandardError
        attr_reader :name
        
        def initialize(msg: "ObjectType has no measure in data object", name:)
            @name = name
            super(msg)
        end
    end
   
end
