config:
  title: Aquarium Microtiter Plates
  description: Models for working with microtiter plates
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Cannon Mallory, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  acknowledgements: [{name: Benjamin Keller, affiliation: University of Washington}]
  github: {user: dvnstrcklnd, repo: microtiter-plates, organization: aquariumbio}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: MicrotiterPlates, category: Microtiter Plates}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/AssociationManagement'
needs 'Microtiter Plates/PlateLayoutGenerator'

module MicrotiterPlates
  # Convert a letter to the corresponding array index
  #
  # @param letter [String] the letter (usually of a row)
  # @return Fixnum
  def letter_to_index(letter)
    alphabet_array.index(letter.upcase)
  end

  # Convert an array index to the corresponding letter of the alphabet
  #
  # @param index [Fixnum] the index (usually of a row)
  # @return String
  def index_to_letter(index)
    alphabet_array[index]
  end

  # Array of all letters of the alphablet in uppercase
  #
  # @return Array<String>
  def alphabet_array
    ('A'..'Z').to_a
  end

  # Get the alpha component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [String, nil] the first contiguous run of letters or nil if no
  #   letters are found
  def alpha_component(alphanum)
    mtch = alphanum.match(/[[:alpha:]]+/)
    return mtch[0] if mtch
  end

  # Get the numeric component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [Fixnum, nil] the first contiguous run of digits or nil if no
  #   digits are found
  def numeric_component(alphanum)
    mtch = alphanum.match(/\d+/)
    return mtch[0].to_i if mtch
  end
end

# Factory class for building `MicrotiterPlate`s
# @author Devin Strickland <strcklnd@uw.edu>
#
class MicrotiterPlateFactory
  # Builds a new `MicrotiterPlate`
  #
  # @param collection [Collection] the `Collection` that is to be managed
  # @param group_size [Fixnum] the size of groups of wells, e.g., corresponding
  #   to replicates (see `PlateLayoutGenerator`)
  # @param method [String] the method for creating a new `PlateLayoutGenerator`
  # @return [MicrotiterPlate]
  def self.build(collection:, group_size:, method:)
    MicrotiterPlate.new(
      collection: collection,
      group_size: group_size,
      method: method
    )
  end
end

# Class for modeling the addition of samples to a microtiter (e.g, 96-well)
#   plate
# @author Devin Strickland <strcklnd@uw.edu>
#
class MicrotiterPlate
  include AssociationManagement
  include PartProvenance

  attr_reader :collection

  # Instantiates `MicrotiterPlate`
  #
  # @param collection [Collection] the `Collection` that is to be managed
  # @param group_size [Fixnum] the size of groups of wells, e.g., correspionding
  #   to replicates (see `PlateLayoutGenerator`)
  # @param method [String] the method for creating a new `PlateLayoutGenerator`
  # @return [MicrotiterPlate]
  def initialize(collection:, group_size:, method:)
    @collection = collection
    @plate_layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: method
    )
  end

  # Associates the provided data to the next `PlateLayoutGenerator` index
  #   that does not point to a `Part` that already has a `DataAssociation`
  #   for `key` and returns the index
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Fixnum>]
  def associate_next_empty(key:, data:, column: nil)
    nxt = next_empty(key: key, column: column)
    associate(index: nxt, key: key, data: data)
    nxt
  end

  # Associates the provided data to the next `PlateLayoutGenerator` group
  #   that does not point to any `Part` that already has a `DataAssociation`
  #   for `key` and returns the group
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Array<Fixnum>>]
  def associate_next_empty_group(key:, data:, column: nil)
    nxt_grp = next_empty_group(key: key, column: column)
    associate_group(group: nxt_grp, key: key, data: data)
    nxt_grp
  end

  # Uses `PartProvenance` to associate the the provided provenance data to
  #   the next `PlateLayoutGenerator` index that does not point to a `Part`
  #   that already has a `DataAssociation` for `key` and returns the index
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [Array<Hash>] the data for the association; each Hash must
  #   include an `item: Item` pair
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Fixnum>]
  def associate_provenance_next_empty(key:, data:, column: nil)
    nxt = next_empty(key: key, column: column)
    associate_provenance(index: nxt, key: key, data: data)
    nxt
  end

  # Uses `PartProvenance` to associate the the provided provenance data to
  #   the next `PlateLayoutGenerator` group that does not point to any `Part`
  #    that already has a `DataAssociation` for `key` and returns the group
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [Array<Hash>] the data for the association; each Hash must
  #   include an `item: Item` pair
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Array<Fixnum>>]
  def associate_provenance_next_empty_group(key:, data:, column: nil)
    nxt_grp = next_empty_group(key: key, column: column)
    associate_provenance_group(group: nxt_grp, key: key, data: data)
    nxt_grp
  end

  # Returns the next `PlateLayoutGenerator` index that does not point to a
  #   `Part` that already has a `DataAssociation` for `key`
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Fixnum>]
  def next_empty(key:, column: nil)
    nxt = nil
    loop do
      nxt = @plate_layout_generator.next(column: column)
      prt = @collection.part(nxt[0], nxt[1])
      break unless prt.associations[key].present?
    end
    nxt
  end

  # Returns the next `PlateLayoutGenerator` group that does not point to any
  #   `Part` that already has a `DataAssociation` for `key`
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Array<Fixnum>>]
  def next_empty_group(key:, column: nil)
    nxt_grp = nil
    loop do
      present = false
      nxt_grp = @plate_layout_generator.next_group(column: column)
      nxt_grp.each do |nxt|
        prt = @collection.part(nxt[0], nxt[1])
        present = true if prt.associations[key].present?
      end
      break unless present
    end
    nxt_grp
  end

  # Associates the provided data to indices of the provided group
  #
  # @param group [Array<Array<Fixnum>>]
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @return [void]
  def associate_group(group:, key:, data:)
    group.each { |i| associate(index: i, key: key, data: data) }
  end

  # Uses `PartProvenance` to associate the provided provenance data to
  #   indices of the provided group
  #
  # @param group [Array<Array<Fixnum>>]
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [Array<Hash>] the data for the association; each Hash must
  #   include an `item: Item` pair
  # @return [void]
  def associate_provenance_group(group:, key:, data:)
    group.each { |i| associate_provenance(index: i, key: key, data: data) }
  end

  # Make a simple data association on a part
  #
  # @param index [Array<Fixnum>] the row, column pair pointing to the part
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @return [void]
  def associate(index:, key:, data:)
    part = @collection.part(index[0], index[1])
    part.associate(key, data)
  end

  # Uses `PartProvenance` to associate the provided provenance data to
  #   a part
  #
  # @param index [Array<Fixnum>] the row, column pair pointing to the part
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object] the data for the association; Hash must
  #   include an `item: Item` pair
  # @return [void]
  def associate_provenance(index:, key:, data:)
    to_item = @collection.part(index[0], index[1])
    data.each do |datum|
      # Make sure you aren't modifying a shared data structure
      datum = datum.dup
      from_item = datum.delete(:item)
      next unless from_item

      add_one_to_one_provenance(
        from_item: from_item,
        to_item: to_item,
        additional_relation_data: datum
      )
    end
    associate(index: index, key: key, data: 'added')
  end

  private

  # Add provenance data to a source-destination pair of items
  #
  # @param from_item [Item]
  # @param to_item [Item]
  # @param additional_relation_data [serializable object] additional data that
  #   will be added to the provenace association
  # @return [void]
  def add_one_to_one_provenance(from_item:, to_item:,
                                additional_relation_data: nil)
    from_map = AssociationMap.new(from_item)
    to_map = AssociationMap.new(to_item)

    add_provenance(
      from: from_item, from_map: from_map,
      to: to_item, to_map: to_map,
      additional_relation_data: additional_relation_data
    )
    from_map.save
    to_map.save
  end
end

library: {name: PlateLayoutGenerator, category: Microtiter Plates}
code_source:
# frozen_string_literal: true

# Factory class for instantiating `PlateLayoutGenerator`
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGeneratorFactory
  # Instantiates `PlateLayoutGenerator`
  #
  # @param group_size [FixNum] the size of groups of wells, e.g., corresponding
  #   to replicates
  # @return [PlateLayoutGenerator]
  def self.build(group_size: 1, method: nil, dimensions: [8, 12])
    PlateLayoutGenerator.new(group_size: group_size,
                             method: method,
                             dimensions: dimensions)
  end
end

# Provides individual indices or batches of indices from a microtiter plate, in
#   order from top left ,and yielding each index only once
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGenerator
  def initialize(group_size: 1, method: nil, dimensions: [8, 12])
    @group_size = group_size
    method ||= :cdc_sample_layout
    @layout = send(method)
    @rows = dimensions[0]
    @columns = dimensions[1]
    @ii = []
    @column = []
    @first_index = []
  end

  def next(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i)
  end

  def next_group(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i, @group_size)
  end

  def iterate_column(column)
    return nil if column.blank?
    if column < @columns
      column += 1
    else
      column = 0
    end
    column
  end

  private

  def first_index_in(column)
    @layout.index { |x| x[1] == column }
  end

  def cdc_sample_layout
    lyt = []
    [0, 4].each do |j|
      cols = Array.new(12) { |c| c }
      cols.each { |c| @group_size.times { |i| lyt << [i + j, c] } }
    end
    lyt
  end

  # @todo make this responsive to @group_size
  def cdc_primer_layout
    lyt = []
    3.times { |i| [0, 4].each { |j| 12.times { |k| lyt << [i + j, k] } } }
    lyt
  end

  #==================Modified CDC Methods ====================#

  def modified_sample_layout_two
    lyt = []
    make_modified_start_array(2).each do |j|
      cols = Array.new(@columns) { |c| c }
      cols.each { |c| 2.times { |i| lyt << [i+j, c] } }
    end
    lyt
  end

  def modified_sample_layout_one
    lyt = []
    make_modified_start_array(1).each do |j|
      cols = Array.new(@columns) { |c| c }
      cols.each { |c| 1.times { |i| lyt << [i + j, c] } }
    end
    lyt
  end

  def modified_primer_layout
    lyt = []
    1.times do |i|
      make_modified_start_array(1).each do |j|
        @columns.times { |k| lyt << [i + j, k] }
      end
    end
    lyt
  end

  #============= Helper Methods =========#

  # This allows the modified CDC protocol to be run on flexible plate sizes
  # It may be needed in cases when 96 well plates are turned sideways or if
  # run at lower/higher throughput
  #
  # @param size [Int] usually is the same as group size. I wanted to hard code
  #   this in... still debating if thats the right call... easy to change tho
  def make_modified_start_array(size)
    rem = @rows % size
    size += 1 unless rem.zero?
    start_array = []
    @rows.times do |idx|
      start_row = size * idx
      break if start_row == @rows && size != 1

      start_array.push(start_row)
    end
    start_array
  end

end

sample_types:
  - {name: Master Mix, description: Master Mix sample type TODO Make better description}
  - {name: qPCR Reaction, description: qPCR Reaction}
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object_types:
  - {name: 96-well qPCR Plate, description: 96-well qPCR Reaction, handler: collection, unit: qPCR Reaction, release_method: return, rows: 8, columns: 12, sample_type_name: qPCR Reaction}
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operation_type: Microtiter Plate Test
category: Test
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [Master Mix], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Microtiter Plates/MicrotiterPlates'
needs 'Collection Management/CollectionDisplay'
needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/debug'

class Protocol
  include CollectionDisplay
  include AssociationManagement
  include Debug

  VERBOSE = false

  KEY = 'patient_sample'
  GROUP_SIZE = 3
  METHOD = :cdc_sample_layout

  def main
    op = operations.first
    collection = op.input('PCR Plate').collection
    setup_test_plate(collection: collection)

    microtiter_plate = MicrotiterPlateFactory.build(
      collection: collection,
      group_size: GROUP_SIZE,
      method: METHOD
    )

    # Should skip the first column becasue it has `patient_sample` filled:
    # [[0, 1], [1, 1], [2, 1]]
    # NOT
    # [[0, 0], [1, 0], [2, 0]]
    #
    inspect microtiter_plate.next_empty_group(key: KEY).to_s

    {}

  end

  # Populate test plate with qPCR Reactions and one no template control (NTC)
  #
  def setup_test_plate(collection:)
    qpcr_reaction = Sample.find_by_name('Test qPCR Reaction')
    ntc_item = Item.find(258)

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: GROUP_SIZE,
      method: METHOD
    )

    i = 0
    loop do
      layout_group = layout_generator.next_group
      break unless layout_group.present?

      layout_group.each do |r, c|
        collection.set(r, c, qpcr_reaction)
        next if i.positive?

        part = collection.part(r, c)
        inspect part, "part at #{[r, c]}" if VERBOSE
        part.associate(KEY, ntc_item)
        inspect part.associations, "#{KEY} at #{[r, c]}" if VERBOSE
      end
      i += 1
    end

    show_result(collection: collection) if VERBOSE
    inspect collection.parts.to_s if VERBOSE
  end

  def show_result(collection:)
    show do
      table highlight_non_empty(collection)
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end
