config:
  title: Aquarium PCR Models
  description: Libraries to model PCR composition and program, and help with master mixes
  copyright: University of Washington
  version: 0.1.2
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Cannon Mallory, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  acknowledgements: [{name: Ben Keller, affiliation: University of Washington}]
  github: {user: dvnstrcklnd, repo: pcr-models}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: MasterMixHelper, category: PCR Libs}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/Units'
needs 'Standard Libs/CommonInputOutputNames'

# Contains methods for assembling and dispensing master mixes
# @author Devin Strickland <strcklnd@uw.edu>
module MasterMixHelper
  include CommonInputOutputNames
  include Units

  # TODO: Get this out of here.
  TEST = 'TEST'

  # Group operations by multiple inputs
  # @todo Make the grouped Operations be OperationLists
  #
  # @param input_names [Array<String>] names of inputs to be included
  #   in grouping
  # @param ops [OperationList, Array<Operation>] operations to be grouped
  # @return [Array(Array<String>, Hash{Array<FixNum> => Array<Operation>})]
  #   the input IDs with singletons eliminated, followed by
  #   the grouped operations
  def group_ops_by_inputs(input_names:, ops:)
    input_names = eliminate_singletons(input_names: input_names, ops: ops)
    grouped_ops = ops.group_by do |op|
      input_item_id_array(input_names: input_names, op: op)
    end
    [input_names, grouped_ops]
  end

  # Remove input names from the list where each operation is a
  #   different input item
  #
  # @param input_names [Array<String>] input names to be tested and,
  #   if appropriate, eliminated
  # @param ops [OperationList, Array<Operation>] operations
  # @return [Array<String>] the input names with singletons eliminated
  def eliminate_singletons(input_names:, ops:)
    input_names.reject { |n| singletons?(input_name: n, ops: ops) }
  end

  # Tests whether each operation has a different item for a given input name and
  #   returns true if each is different
  #
  # @param input_name [String] input name to be tested
  # @param ops [OperationList, Array<Operation>] operations
  # @return [Boolean]
  def singletons?(input_name:, ops:)
    ids = ops.map { |op| item_id(input_name: input_name, op: op) }
    ids.uniq.length == ops.length
  end

  # Gets the ID for the Item or Part specified by a given input name
  #
  # @param input_name [String] input name to be tested
  # @param op [Operation]
  # @return [FixNum] the Item or Part ID
  def item_id(input_name:, op:)
    fv = op.input(input_name)
    fv.part.try(:id) || fv.item.id
  end

  # Maps Item IDs for a given list of input names and a given operation
  #
  # @param input_names [Array<String>] input names to be mapped
  # @param op [Operation]
  # @return [Array<FixNum>]
  def input_item_id_array(input_names:, op:)
    input_names.map { |n| op.input(n).child_item_id }
  end

  # Makes master mix(es) for a set of operations
  # Assumes that all operations have the same PCR program
  #
  # @param grouped_ops [Hash{Array<FixNum> => Array<Operation>}] hash of
  #   operations grouped by input IDs
  # @param input_names [Array<String>] input names corresponding to
  #   grouped_ops keys
  # @param composition [PCRComposition]
  # @param mult [Float] Amount to multiply each component volume by
  #   to account for pipetting error
  # @return [Hash{String => Array<Operation>}] hash of operations grouped by
  #   tube labels
  def make_master_mixes(grouped_ops:, input_names:, composition:, mult: 1.0)
    ops_by_master_mix = {}

    grouped_ops.each_with_index do |(inputs, ops), i|
      mm_tube_label = "MM#{i + 1}"
      this_mult = mult * ops.length

      master_mix_table = master_mix_table(
        inputs: inputs,
        input_names: input_names,
        composition: composition,
        mult: this_mult
      )

      show do
        title "Make Master Mix #{mm_tube_label}"

        check "Get a 1.5mL tube and label it <b>#{mm_tube_label}</b>."
        note 'Add reaction components as indicated:'
        table master_mix_table
      end

      ops_by_master_mix[mm_tube_label] = ops
    end

    show do
      title 'Vortex and Spin Down'

      check 'Vortex the master mix tubes briefly and spin down'
    end

    ops_by_master_mix
  end

  # Build table for volumes of master mix components
  #
  # @param inputs [Array<FixNum>] input item IDs
  # @param input_names [Array<String>] input names
  # @param composition [PCRComposition]
  # @param mult [Float] Amount to multiply each component volume by to
  #   account for pipetting error
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def master_mix_table(inputs:, input_names:, composition:, mult:)
    header = [
      "#{composition.polymerase.display_name} #{composition.polymerase.item}",
      "#{composition.dye.display_name} #{composition.dye.item}",
      composition.water.display_name
    ]

    row = [
      composition.polymerase.add_in_table(mult),
      composition.dye.add_in_table(mult),
      composition.water.add_in_table(mult)
    ]

    input_names.each_with_index do |input_name, i|
      header << "#{input_name} #{inputs[i]}"
      row << composition.input(input_name).add_in_table(mult)
    end

    [header, row].transpose
  end

  # Dispenses master mixes for PCR
  # Assumes all operations in ops_by_master_mix hash are from the same program
  #
  # @param output_name [String] output name
  # @param ops_by_master_mix [Hash{String => Array<Operation>}] hash of
  #   operations grouped by tube labels
  # @param composition [PCRComposition]
  def dispense_master_mix(output_name:, ops_by_master_mix:, composition:, mult: 1.0)
    coll = ops_by_master_mix.values.first.first.output(output_name).collection
    coll_display = "#{coll}-#{TEST}"

    mm_vol = composition.sum_added_components * mult
    divide = composition.volume * mult > 100

    if divide
      ops = ops_by_master_mix.values.flatten
      labels = ops.map do |op|
        coll_id_display(
          op: op, handle: output_name,
          role: 'output', hide_id: true
          )
      end
      show do
        title 'Divide Master Mix'

        note "Get #{ops.length} 1.5 ml microfuge tubes and label them"\
             " #{labels.to_sentence}"
      end
    end

    destination = divide ? 'microfuge tube' : "#{coll_display} position"

    master_mix_table = []
    master_mix_table[0] = [
      'MM tube',
      destination
    ]

    ops_by_master_mix.each do |master_mix, ops|
      ops.each do |op|
        pos = coll_id_display(
          op: op, handle: output_name,
          role: 'output', hide_id: true
        )
        row = [
          master_mix,
          { content: pos, check: true }
        ]
        master_mix_table.append(row)
      end
    end

    show do
      title 'Dispense Master Mix'
      note "Dispense #{mm_vol} #{MICROLITERS} of each master mix"\
           " into the indicated <b>#{destination}</b>"
      table master_mix_table
    end
  end

  # Dispenses a component
  #
  # @param input_name [String] input name of component
  # @param output_name [String] output name
  # @param ops [OperationList, Array<Operation>] operations
  # @param composition [PCRComposition]
  # @param mult [Float] Amount to multiply each component volume by to
  #   account for pipetting error
  def dispense_component(input_name:, output_name:, ops:, composition:, mult: 1.0)
    coll = ops.first.output(output_name).collection
    coll_display = "#{coll}-#{TEST}"

    component = composition.input(input_name)
    comp_vol = component.adjusted_qty(mult = mult, round = 1, checkable = false)

    divide = composition.volume * mult > 100
    destination = divide ? 'microfuge tube' : "#{coll_display} position"

    uniq_inputs = ops.map { |op| op.input(input_name).item }.uniq
    if uniq_inputs.length == 1
      from_header = "#{uniq_inputs.first} position"
      hide_input_id = true
    else
      from_header = "#{input_name} ID"
      hide_input_id = false
    end

    dispense_table = []
    dispense_table[0] = [
      from_header,
      destination
    ]

    ops.each do |op|
      from_pos = coll_id_display(
        op: op, handle: input_name,
        role: 'input', hide_id: hide_input_id
      )
      to_pos = coll_id_display(
        op: op, handle: output_name,
        role: 'output', hide_id: true
      )
      row = [from_pos, { content: to_pos, check: true }]
      dispense_table.append(row)
    end

    show do
      title "Dispense #{input_name.pluralize}"

      if input_name.pluralize == 'Templates'

        check "Dispense #{comp_vol} #{MICROLITERS} of each template in" \
          " the indicated <b>#{destination}</b> and close cap for each well" \
          ' after template is added'
        table dispense_table
        note 'Vortex and spin down test stripwells'

      else

        check "Dispense #{comp_vol} #{MICROLITERS} of each #{input_name}"\
              " into the indicated <b>#{destination}</b>"
        table dispense_table

      end
    end
  end

  # Displays id / position for items that may be sub-items in collections
  #
  # @param op [Operation]
  # @param handle [String] input or output name
  # @param role [String] "input" or "output"
  # @param hide_id [Boolean] whether to include the Collection ID
  # @return [String] Item ID followed by location if a collection
  def coll_id_display(op:, handle:, role: 'input', hide_id: false)
    if role == 'input'
      fv = op.input(handle)
    elsif role == 'output'
      fv = op.output(handle)
    else
      raise "Unrecognized role: #{role}"
    end

    display = hide_id ? '' : fv.item.to_s

    if fv.item.collection?
      row = fv.row
      col = fv.column
      row, col = fv.collection.find(fv.sample).first unless row && col
      display += " #{well_pos_display(row, col)}"
    end

    display.strip
  end

  def well_pos_display(row, col)
    alpha_r = ('A'..'H').to_a
    "#{alpha_r[row]}#{col + 1}"
  end
end

library: {name: PCRComposition, category: PCR Libs}
code_source:
# frozen_string_literal: true

needs 'PCR Libs/PCRCompositionDefinitions'

# Factory class for instantiating `PCRComposition`
# @author Devin Strickland <strcklnd@uw.edu>
class PCRCompositionFactory
  # Instantiates `PCRComposition`
  # Either `component_data` or `program_name` must be passed
  #
  # @param component_data [Hash] a hash enumerating the components
  # @param program_name [String] the name of one of the default
  #   component hashes
  # @return [PCRComposition]
  def self.build(component_data: nil, program_name: nil)
    PCRComposition.new(
      component_data: component_data,
      program_name: program_name
    )
  end
end

# Models the composition of a polymerase chain reaction
# @author Devin Strickland <strcklnd@uw.edu>
# @note As much as possible, Protocols using this class should draw
#   input names from `CommonInputOutputNames`
class PCRComposition
  include PCRCompositionDefinitions

  attr_accessor :components

  # Instantiates the class
  # Either `component_data` or `program_name` must be passed
  #
  # @param component_data [Hash] a hash enumerating the components
  # @param program_name [String] the name of one of the default
  #   component hashes
  # @return [PCRComposition]
  def initialize(component_data: nil, program_name: nil)
    if component_data.blank? && program_name.blank?
      msg = 'Unable to initialize PCRComposition.' \
        ' Either `component_data` or `program_name` is required.'
      raise ProtocolError, msg
    elsif program_name.present?
      component_data = get_composition_def(name: program_name)
    end

    @components = []
    component_data.each { |_, c| components.append(ReactionComponent.new(c)) }
  end

  # Specifications for the dye component
  # @return (see #input)
  def dye
    input(DYE)
  end

  # Specifications for the polymerase component
  # @return (see #input)
  def polymerase
    input(POLYMERASE)
  end

  # Specifications for the master mix component
  # @return (see #input)
  def master_mix
    input(MASTER_MIX)
  end

  # Specifications for the forward primer component
  # @return (see #input)
  def forward_primer
    input(FORWARD_PRIMER)
  end

  # Specifications for the reverse primer component
  # @return (see #input)
  def reverse_primer
    input(REVERSE_PRIMER)
  end

  # Specifications for the primer/probe component
  # @return (see #input)
  def primer_probe_mix
    input(PRIMER_PROBE_MIX)
  end

  # Specifications for the template component
  # @return [ReactionComponent]
  def template
    input(TEMPLATE)
  end

  # Specifications for the water component
  # @return (see #input)
  def water
    input(WATER)
  end

  # Retrieves components by input name
  # Generally the named methods should be used.
  # However, this method can be convenient in loops, especially when
  #   the Protocol draws input names from `CommonInputOutputNames`
  #
  # @param input_name [String] the name of the component to be retrieved
  # @return [ReactionComponent]
  def input(input_name)
    components.find { |c| c.input_name == input_name }
  end

  # Displays the total reaction volume with units
  #
  # @todo Make this work better with units other than microliters
  # @return [String]
  def qty_display
    Units.qty_display({ qty: volume, units: MICROLITERS })
  end

  # The total reaction volume
  # @note Rounds to one decimal place
  # @return [Float]
  def volume
    sum_components
  end

  # The total reaction volume
  # @param round [Fixnum] the number of decimal places to round to
  # @return [Float]
  def sum_components(round = 1)
    components.map(&:qty).reduce(:+).round(round)
  end

  # The total volume of all components that have been added
  # @param (see #sum_components)
  # @return (see #sum_components)
  def sum_added_components(round = 1)
    added_components.map(&:qty).reduce(:+).round(round)
  end

  # Gets the components that have been added
  # @return [Array<ReactionComponent>]
  def added_components
    components.select(&:added?)
  end

  # Gets the `Item`s from `ReactionComponent`s and returns them as an array
  # @return [Array<Item>]
  def items
    components.map(&:item)
  end
end

# Models a component of a biochemical reaction
# @author Devin Strickland <strcklnd@uw.edu>
class ReactionComponent
  include Units

  attr_reader :input_name, :qty, :units, :sample, :item
  attr_accessor :added

  # Instantiates the class
  #
  # @param input_name [String] the name of the component
  # @param qty [Numeric] the quantity of this component to be added to
  #   a single reaction
  # @param units [String] the units of `qty`
  # @param sample_name [String] the name of the Aquarium Sample to be
  #   used for this component
  # @param object_name [String] the ObjectType (Container) that this
  #   component should be found in
  def initialize(input_name:, qty:, units:, sample_name: nil)
    @input_name = input_name
    @qty = qty
    @units = units
    @sample = sample_name ? Sample.find_by_name(sample_name) : nil
    @item = nil
    @added = false
  end

  # Sets `item`
  #
  # @param item [Item]
  def item=(item)
    if sample
      raise ProtocolError, 'Item / Sample mismatch' unless sample == item.sample
    else
      @sample = item.sample
    end
    @item = item
  end

  # The input name, formatted for display in protocols
  # @return [String]
  def display_name
    input_name
  end

  # The volume as a qty, units hash
  #
  # @return [Hash]
  def volume_hash
    { qty: qty, units: units }
  end

  # Displays the volume (`qty`) with units
  #
  # @return [String]
  def qty_display(round = 1)
    Units.qty_display({ qty: qty.round(round), units: units })
  end

  # Adjusts the qty by a given factor and, if needed, makes it checkable
  #   in a table
  #
  # @param mult [Float] the factor to multiply `qty` by
  # @param round [FixNum] the number of places to round the result to
  # @param checkable [Boolean] whether to make the result checkable
  #   in a table
  # @return [Numeric, Hash]
  def adjusted_qty(mult = 1.0, round = 1, checkable = true)
    adj_qty = (qty * mult).round(round)
    adj_qty = { content: adj_qty, check: true } if checkable
    adj_qty
  end

  # provides the `qty` for display in a table, and markes it as `added`
  #
  # @param (see #adjusted_qty)
  # @return (see #adjusted_qty)
  def add_in_table(mult = 1.0, round = 1, checkable = true)
    @added = true
    adjusted_qty(mult, round, checkable)
  end

  # Checks if `self` has been added
  # @return [Boolean]
  def added?
    added
  end
end

library: {name: PCRCompositionDefinitions, category: PCR Libs}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/Units'
needs 'Standard Libs/CommonInputOutputNames'

# Provice composition definitions for PCR reactions
# @author Devin Strickland <strcklnd@uw.edu>
module PCRCompositionDefinitions
  include Units
  include CommonInputOutputNames

  POLYMERASE = 'Polymerase'
  DYE = 'Dye'
  WATER = 'Molecular Grade Water'
  MASTER_MIX = 'Master Mix'
  PRIMER_PROBE_MIX = 'Primer/Probe Mix'

  COMPONENTS = {
    # qPCR2: 2nd qPCR in NGS prep.
    'qPCR1' => {
      polymerase: {
        input_name: POLYMERASE,
        qty: 16, units: MICROLITERS,
        sample_name: 'Kapa HF Master Mix'
      },
      forward_primer: {
        input_name: FORWARD_PRIMER,
        qty: 0.16,  units: MICROLITERS
      },
      reverse_primer: {
        input_name: REVERSE_PRIMER,
        qty: 0.16,  units: MICROLITERS
      },
      dye: {
        input_name: DYE,
        qty: 1.6, units: MICROLITERS,
        sample_name: 'Eva Green'
      },
      water: {
        input_name: WATER,
        qty: 6.58, units: MICROLITERS
      },
      template: {
        input_name: TEMPLATE,
        qty: 7.5, units: MICROLITERS
      }
    },

    # qPCR2: 2nd qPCR in NGS prep.
    #   Reverse primer is indexed primer.
    'qPCR2' => {
      polymerase: {
        input_name: POLYMERASE,
        qty: 25, units: MICROLITERS,
        sample_name: 'Kapa HF Master Mix'
      },
      forward_primer: {
        input_name: FORWARD_PRIMER,
        qty: 2.5, units: MICROLITERS
      },
      reverse_primer: {
        input_name: REVERSE_PRIMER,
        qty: 2.5, units: MICROLITERS
      },
      dye: {
        input_name: DYE,
        qty: 2.5, units: MICROLITERS,
        sample_name: 'Eva Green'
      },
      water: {
        input_name: WATER,
        qty: 15.5, units: MICROLITERS
      },
      template: {
        input_name: TEMPLATE,
        qty: 2, units: MICROLITERS
      }
    },

    # LIBqPCR1: 1st qPCR in Libray prep.
    #   If sublibrary primers exist they are used here.
    'lib_qPCR1' => {
      polymerase: {
        input_name: POLYMERASE,
        qty: 12.5, units: MICROLITERS,
        sample_name: 'Kapa HF Master Mix'
      },
      forward_primer: {
        input_name: FORWARD_PRIMER,
        qty: 0.75, units: MICROLITERS
      },
      reverse_primer: {
        input_name: REVERSE_PRIMER,
        qty: 0.75, units: MICROLITERS
      },
      dye: {
        input_name: DYE,
        qty: 1.25, units: MICROLITERS,
        sample_name: 'Eva Green'
      },
      water: {
        input_name: WATER,
        qty: 8.75, units: MICROLITERS
      },
      template: {
        input_name: TEMPLATE,
        qty: 1, units: MICROLITERS
      }
    },

    # LIBqPCR2: 2nd qPCR in Libray prep.
    #   Overhangs compatible with cloning vector are added here.
    'lib_qPCR2' => {
      polymerase: {
        input_name: POLYMERASE,
        qty: 25, units: MICROLITERS,
        sample_name: 'Kapa HF Master Mix'
      },
      forward_primer: {
        input_name: FORWARD_PRIMER,
        qty: 1.5, units: MICROLITERS
      },
      reverse_primer: {
        input_name: REVERSE_PRIMER,
        qty: 1.5, units: MICROLITERS
      },
      dye: {
        input_name: DYE,
        qty: 2.5, units: MICROLITERS,
        sample_name: 'Eva Green'
      },
      water: {
        input_name: WATER,
        qty: 17.5, units: MICROLITERS
      },
      template: {
        input_name: TEMPLATE,
        qty: 2, units: MICROLITERS
      }
    },

    # CDC COVID-19 detection protocol
    'CDC_TaqPath_CG' => {
      water: {
        input_name: WATER,
        qty: 8.5, units: MICROLITERS
      },
      primer_probe_mix: {
        input_name: PRIMER_PROBE_MIX,
        qty: 1.5, units: MICROLITERS
      },
      master_mix: {
        input_name: MASTER_MIX,
        qty: 5.0, units: MICROLITERS,
        sample_name: 'TaqPath 1-Step RT-qPCR Master Mix (4x)'
      },
      template: {
        input_name: TEMPLATE,
        qty: 5.0, units: MICROLITERS
      }
    },

    # CDC COVID-19 detection protocol
    'CDC_qScript_XLT_ToughMix' => {
      water: {
        input_name: WATER,
        qty: 3.5, units: MICROLITERS
      },
      primer_probe_mix: {
        input_name: PRIMER_PROBE_MIX,
        qty: 1.5, units: MICROLITERS
      },
      master_mix: {
        input_name: MASTER_MIX,
        qty: 10, units: MICROLITERS,
        sample_name: 'qScript XLT One-Step RT-qPCR ToughMix (2X)'
      },
      template: {
        input_name: TEMPLATE,
        qty: 5.0, units: MICROLITERS
      }
    },

    # CDC COVID-19 detection protocol
    'CDC_UltraPlex_ToughMix' => {
      water: {
        input_name: WATER,
        qty: 8.5, units: MICROLITERS
      },
      primer_probe_mix: {
        input_name: PRIMER_PROBE_MIX,
        qty: 1.5, units: MICROLITERS
      },
      master_mix: {
        input_name: MASTER_MIX,
        qty: 5.0, units: MICROLITERS,
        sample_name: 'UltraPlex 1-Step ToughMix (4X)'
      },
      template: {
        input_name: TEMPLATE,
        qty: 5.0, units: MICROLITERS
      }
    },

    # CDC COVID-19 detection protocol
    'CDC_GoTaq_Probe_1-Step' => {
      water: {
        input_name: WATER,
        qty: 3.1, units: MICROLITERS
      },
      primer_probe_mix: {
        input_name: PRIMER_PROBE_MIX,
        qty: 1.5, units: MICROLITERS
      },
      master_mix: {
        input_name: MASTER_MIX,
        qty: 10, units: MICROLITERS,
        sample_name: 'GoTaq Probe qPCR Master Mix with dUTP'
      },
      rt_mix: {
        input_name: 'RT Mix',
        qty: 0.4, units: MICROLITERS,
        sample_name: 'Go Script RT Mix for 1-Step RT-qPCR'
      },
      template: {
        input_name: TEMPLATE,
        qty: 5.0, units: MICROLITERS
      }
    },

    # Modified CDC COVID-19 detection protocol
    'Modified_CDC' => {
      template: {
        input_name: TEMPLATE,
        qty: 5.0, units: MICROLITERS
      },
      primer_probe_mix: {
        input_name: PRIMER_PROBE_MIX,
        qty: 0.0, units: MICROLITERS
      }
    }
  }.freeze

  private_constant :COMPONENTS

  # Gets the Hash that defines the compostion for the given name
  #
  # @param name [String]
  # @return [Hash]
  def get_composition_def(name:)
    COMPONENTS[name]
  end
end

library: {name: PCRProgram, category: PCR Libs}
code_source:
# frozen_string_literal: true

needs 'PCR Libs/PCRProgramDefinitions'

# Factory class for instantiating `PCRProgram`
# @author Devin Strickland <strcklnd@uw.edu>
class PCRProgramFactory
  # Instantiates `PCRComposition`
  #
  # @param program_name [String] the name of one of the default program hashes
  # @param volume [Numeric] the reaction volume in MICROLITERS
  # @return [PCRProgram]
  def self.build(program_name:, volume: nil)
    PCRProgram.new(program_name: program_name, volume: volume)
  end
end

# Models a thermocycler program
# @author Devin Strickland <strcklnd@uw.edu>
class PCRProgram
  include PCRProgramDefinitions

  attr_reader :program_name, :program_template_name, :layout_template_name
  attr_reader :steps, :volume

  # Instantiates the class
  #
  # @param program_name [String] the name of one of the default program hashes
  # @param volume [Numeric] the reaction volume in MICROLITERS
  # @return [PCRProgram]
  def initialize(args = {})
    @program_name = args[:program_name]
    program = get_program_def(name: program_name)
    @program_template_name = program[:program_template_name]
    @name = @program_template
    @plate = program[:plate]
    @layout_template_name = program[:layout_template_name]
    @steps = {}
    program[:steps].each { |k, v| @steps[k] = PCRStep.create_from(v) }
    @volume = args[:volume] || program[:volume]
  end

  # @deprecated Use {#program_template_name}
  def name
    program_template_name
  end

  # @deprecated Use {#layout_template_name}
  def plate
    layout_template_name
  end

  # Renders the thermocycler program as a table for `show` blocks
  #
  # @return [Array<Array>]
  def table
    table = [%w[Step Temperature Duration]]
    steps.each do |k, v|
      row = [k.to_s] + v.display
      table.append(row)
    end
    table
  end

  # TODO: This needs to be responsive to the actual program parameters
  def final_step
    'the final step'
  end
end

# Models a step of a PCRProgram
# Really a factory class that retruns a concrete Step class
# @author Devin Strickland <strcklnd@uw.edu>
class PCRStep
  def self.create_from(temperature: nil, duration: nil, goto: nil, times: nil)
    if temperature && duration
      IncubationStep.new(temperature: temperature, duration: duration)
    elsif goto && times
      GotoStep.new(destination: goto, times: times)
    else
      raise ProtocolError, 'Expected either an incubation or goto step'
    end
  end
end

# Models an incubation step
# @author Devin Strickland <strcklnd@uw.edu>
class IncubationStep
  attr_reader :temperature, :duration

  def initialize(temperature:, duration:)
    @temperature = temperature
    @duration = duration
  end

  def display
    [temperature_display, duration_display]
  end

  def temperature_display
    Units.qty_display(temperature)
  end

  def duration_display
    Units.qty_display(duration)
  end
end

# Models a goto step
# @author Devin Strickland <strcklnd@uw.edu>
class GotoStep
  attr_reader :destination, :times

  def initialize(destination:, times:)
    @destination = destination
    @times = times
  end

  def display
    [goto_display, times_display]
  end

  def goto_display
    "goto step #{destination}"
  end

  def times_display
    "#{times} times"
  end
end

library: {name: PCRProgramDefinitions, category: PCR Libs}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/Units'

# Provide program definitions for PCR
# @author Devin Strickland <strcklnd@uw.edu>
module PCRProgramDefinitions
  include Units

  PROGRAMS = {
    'qPCR1' => {
      program_template_name: 'NGS_qPCR1',
      layout_template_name: 'NGS_qPCR1',
      volume: 32,
      steps: {
        step1: {
          temperature: { qty: 95, units: DEGREES_C },
          duration: { qty: 3, units: MINUTES }
        },
        step2: {
          temperature: { qty: 98, units: DEGREES_C },
          duration: { qty: 15, units: SECONDS }
        },
        step3: {
          temperature: { qty: 62, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step4: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step5: { goto: 2, times: 34 },
        step6: {
          temperature: { qty: 12, units: DEGREES_C },
          duration: { qty: 'forever', units: '' }
        }
      }
    },

    'qPCR2' => {
      program_template_name: 'NGS_qPCR2',
      layout_template_name: 'NGS_qPCR1',
      volume: 50,
      steps: {
        step1: {
          temperature: { qty: 98, units: DEGREES_C },
          duration: { qty: 3, units: MINUTES }
        },
        step2: {
          temperature: { qty: 98, units: DEGREES_C },
          duration: { qty: 15, units: SECONDS }
        },
        step3: {
          temperature: { qty: 64, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step4: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step5: { goto: 2, times: 29 },
        step6: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 5, units: MINUTES }
        },
        step7: {
          temperature: { qty: 12, units: DEGREES_C },
          duration: { qty: 'forever', units: '' }
        }
      }
    },

    'lib_qPCR1' => {
      program_template_name: 'LIB_qPCR1',
      layout_template_name: 'LIB_qPCR',
      volume: 25,
      steps: {
        step1: {
          temperature: { qty: 95, units: DEGREES_C },
          duration: { qty: 3, units: MINUTES }
        },
        step2: {
          temperature: { qty: 98, units: DEGREES_C },
          duration: { qty: 15, units: SECONDS }
        },
        step3: {
          temperature: { qty: 65, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step4: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step5: { goto: 2, times: 34 },
        step6: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 5, units: MINUTES }
        },
        step7: {
          temperature: { qty: 12, units: DEGREES_C },
          duration: { qty: 'forever', units: '' }
        }
      }
    },

    'lib_qPCR2' => {
      program_template_name: 'LIB_qPCR2',
      layout_template_name: 'LIB_qPCR',
      volume: 50,
      steps: {
        step1: {
          temperature: { qty: 95, units: DEGREES_C },
          duration: { qty: 3, units: MINUTES }
        },
        step2: {
          temperature: { qty: 98, units: DEGREES_C },
          duration: { qty: 15, units: SECONDS }
        },
        step3: {
          temperature: { qty: 65, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step4: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step5: { goto: 2, times: 34 },
        step6: {
          temperature: { qty: 72, units: DEGREES_C },
          duration: { qty: 5, units: MINUTES }
        },
        step7: {
          temperature: { qty: 12, units: DEGREES_C },
          duration: { qty: 'forever', units: '' }
        }
      }
    },

    'illumina_qPCR_quantification' => {
      program_template_name: 'illumina_qPCR_quantification_v1',
      layout_template_name: 'illumina_qPCR_plate_layout_v1'
    },

    'CDC_TaqPath_CG' => {
      program_template_name: 'CDC_TaqPath_CG',
      layout_template_name: 'CDC_TaqPath_CG',
      volume: 20,
      steps: {
        step1: {
          temperature: { qty: 25, units: DEGREES_C },
          duration: { qty: 2, units: MINUTES }
        },
        step2: {
          temperature: { qty: 50, units: DEGREES_C },
          duration: { qty: 15, units: MINUTES }
        },
        step3: {
          temperature: { qty: 95, units: DEGREES_C },
          duration: { qty: 2, units: MINUTES }
        },
        step4: {
          temperature: { qty: 95, units: DEGREES_C },
          duration: { qty: 3, units: SECONDS }
        },
        step5: {
          temperature: { qty: 55, units: DEGREES_C },
          duration: { qty: 30, units: SECONDS }
        },
        step6: { goto: 4, times: 44 }
      }
    },

    'CDC_qScript_XLT_ToughMix' => {
      program_template_name: 'CDC_qScript_XLT_ToughMix',
      layout_template_name: 'CDC_qScript_XLT_ToughMix',
      volume: 20,
      step1: {
        temperature: { qty: 50, units: DEGREES_C },
        duration: { qty: 10, units: MINUTES }
      },
      step2: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 3, units: MINUTES }
      },
      step3: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 3, units: SECONDS }
      },
      step4: {
        temperature: { qty: 55, units: DEGREES_C },
        duration: { qty: 30, units: SECONDS }
      },
      step5: { goto: 3, times: 44 }
    },

    'CDC_UltraPlex_ToughMix' => {
      program_template_name: 'CDC_UltraPlex_ToughMix',
      layout_template_name: 'CDC_UltraPlex_ToughMix',
      volume: 20,
      step1: {
        temperature: { qty: 50, units: DEGREES_C },
        duration: { qty: 10, units: MINUTES }
      },
      step2: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 3, units: MINUTES }
      },
      step3: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 3, units: SECONDS }
      },
      step4: {
        temperature: { qty: 55, units: DEGREES_C },
        duration: { qty: 30, units: SECONDS }
      },
      step5: { goto: 3, times: 44 }
    },

    'CDC_GoTaq_Probe_1-Step' => {
      program_template_name: 'CDC_GoTaq_Probe_1-Step',
      layout_template_name: 'CDC_GoTaq_Probe_1-Step',
      volume: 20,
      step1: {
        temperature: { qty: 45, units: DEGREES_C },
        duration: { qty: 15, units: MINUTES }
      },
      step2: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 2, units: MINUTES }
      },
      step3: {
        temperature: { qty: 95, units: DEGREES_C },
        duration: { qty: 3, units: SECONDS }
      },
      step4: {
        temperature: { qty: 55, units: DEGREES_C },
        duration: { qty: 30, units: SECONDS }
      },
      step5: { goto: 3, times: 44 }
    }
  }.freeze

  private_constant :PROGRAMS

  # Gets the Hash that defines the program for the given name
  #
  # @param name [String]
  # @return [Hash]
  def get_program_def(name:)
    PROGRAMS[name]
  end
end

operation_type: PCR Test
category: Test
deployed: false
on_the_fly: false
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'

class Protocol
  include ThermocyclerHelper

  def main
    composition = PCRCompositionFactory.build(
      program_name: 'qPCR1'
    )
    program = PCRProgramFactory.build(
      program_name: 'qPCR1',
      volume: composition.volume
    )

    show do
      title 'Composition and Program Test'

      note 'From the PCRProgram'
      table program.table
      note 'From the PCRComposition'
      note "Total volume: #{composition.volume}"
    end

    thermocycler = ThermocyclerFactory.build(
      model: TestThermocycler::MODEL
    )

    if thermocycler.respond_to?(:set_dye)
      show do
        title 'Thermocycler Test'

        note 'Template files:'
        note thermocycler.program_template_file(program: program)
        note thermocycler.layout_template_file(program: program)

        note 'Test image path:'
        note thermocycler.open_software_image
      end

      set_up_program(
        thermocycler: thermocycler,
        program: program,
        composition: composition,
        qpcr: true
      )

      export_measurements(thermocycler: thermocycler)
    end

    load_plate_and_start_run(
      thermocycler: thermocycler,
      experiment_filename: 'test_filename'
    )

    {}
  end
end

test:
class ProtocolTest < ProtocolTestBase

  def setup

      add_random_operations(3)

  end

  def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
  end

end
