config:
  title: standard-libraries
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
library: {name: Add Output, category: Standard Libs}
code_source:
module AddOutput
    
## Example
        # operations.each do |op|
        #     add_output op,"Media", "YEB medium", ObjectType"200 mL Liquid"
        # end
        #operations.make

    def add_output operation, output_name, sample, container
    ft = FieldType.new(
                name: output_name,
                ftype: "sample",
                parent_class: "OperationType",
                parent_id: nil
            )
            ft.save
        
            aft = AllowableFieldType.new({
                field_type_id: ft.id,
                sample_type_id: sample.sample_type.id,
                object_type_id: ObjectType.find_by_name(container).id
            })
            aft.save
            
            fv = FieldValue.new(
                name: "Media",
                child_item_id: nil,
                child_sample_id: sample.id,
                role: 'output',
                parent_class: "Operation",
                parent_id: operation.id,
                field_type_id: ft.id)
            fv.allowable_field_type_id = aft.id
            fv.save
        
    end

end

library: {name: AssociationManagement, category: Standard Libs}
code_source:
# frozen_string_literal: true

# Module with methods and classes that seek to help with associating data
# to, and retrieving data from, items, operations, plans, collections, and parts.
#
module AssociationManagement
  require 'matrix'

  # Associates a key and value to the associations hash of the given object.
  # Replaces an existing association for the given key.
  #
  # A part may be represented as a part item, or a collection and coordinate.
  #
  # @param object [DataAssociator]  the object to associate data
  # @param key [String]  the key for the association
  # @param data [serializable object]  the data for the association
  # @param opts [Hash]  additional method options
  # @option coord [Array]  row, column pair if the object is a collection
  # @option data_matrix [String]  optional data matrix for a collection
  def associate_data(object, key, data, opts = {})
    AssociationMap.associate_data(object, key, data, opts)
  end

  # Returns the associated value from the associations hash of a given object.
  # If an association doesn't exist for the key, returns nil.
  #
  # @param object [DataAssociator]  the object to associated data
  # @param key [String]  the key for the association
  # @param opts [Hash]  additional method options
  # @option coord [tuple Array]  row, column of part if object is a collection.
  # @option data_matrix [String]  optional data matrix
  # @return [serializable object]  the value associated with the given key
  def get_associated_data(object, key, opts = {})
    AssociationMap.get_associated_data(object, key, opts)
  end

  # Defines a map to manage the associations for an {Item}, {Operation}, or
  # {Plan} object, which are Aquarium classes that extend {DataAssociator}.
  #
  # Note: if `map` contains associations, it is necessary to call `map.save` for
  #       the associations to be saved to Aquarium.
  #
  class AssociationMap
    DATAMATRIX_KEY = 'part_data'

    # Initializes an {AssociationMap} for the given item, operation, or plan.
    #
    # @param object [DataAssociator]  the object to which to associated data
    def initialize(object)
      @object = object
      @map = {}

      @object.associations.each do |datum|
        @map[datum[0]] =
          if @object.upload(datum[0]).nil?
            datum[1]
          else
            UploadAssoc.new(datum[1], @object.upload(datum[0]))
          end
      end

      if object.is_a? Collection
        initialize_part_data
        data_matrix_all(@object, @map[DATAMATRIX_KEY])
      end
    end

    # Retrieves part_data from the data associations of constituent parts.
    # achieves forward compatibility with AQ Part update
    def data_matrix_all(coll, data_matrix)
      pas = coll.part_associations
      part_ids = pas.collect(&:part_id)
      das = DataAssociation.where(parent_class: 'Item', parent_id: part_ids)
      pas.each do |pa|
        data_matrix[pa.row][pa.column] = {}
        das.select { |da| da.parent_id == pa.part_id }.each do |da|
          data_matrix[pa.row][pa.column][da.key] = da.value
        end
      end
      data_matrix
    end

    # All in one static method which associates a key and value
    # to the associations hash of a given object. If an association already
    # exists at the given key, it will be replaced. Can associate to parts of collection either
    # using a part field value, or an optional coordinate specification with a collection
    #
    # @param object [DataAssociator]  the object to which data is to be associated. Can be an io field value
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param opts [Hash]  additional method options
    # @option coord [tuple Array]  specify r, c index of the data matrix of the object to upload to,
    #                   rather than directly to the object. Requires that object is a collection.
    # @option data_matrix [String]  optionally, when associating to a part of a collection, use a
    #                         data matrix besides the default one
    def self.associate_data(object, key, data, opts = {})
      defaults = { data_matrix: DATAMATRIX_KEY }
      opts.merge defaults
      raise 'Bad Arguments: cannot associate to a part and specify coords at the same time' if object.is_a?(FieldValue) && opts[:coord]
      if object.is_a?(FieldValue)
        assoc_map = AssociationMap.new(object.collection)
        assoc_map.putrc(object.row, object.column, key, data)
      elsif opts[:coord]
        assoc_map = AssociationMap.new(object)
        assoc_map.putrc(opts[:coord][0], opts[:coord][1], key, data)
      else # Normal case that deals directly with object
        assoc_map = AssociationMap.new(object)
        assoc_map.put(key, data)
      end
      assoc_map.save
    end

    # All in one static method which gets an associated value
    # from the associations hash of a given object. If an association doesn't
    # exist at the given key, returns nil. Can get associations from parts of collection either
    # using a part field value, or an optional coordinate specification with a collection
    #
    # @param object [DataAssociator]  the object to which data is to be associated, can be an io field value
    # @param key [String]  the key for the association
    # @param opts [Hash]  additional method options
    # @option coord [tuple Array]  specify r, c index of the data matrix of the object to upload to,
    #                   rather than directly to the object. Requires that object is a collection.
    # @option data_matrix [String]  optionally, when retrieving association from a part of a collection,
    #                         use a matrix besides the default one
    # @return [serializable object]  the data stored in the associations of the given object at the given key
    def self.get_associated_data(object, key, opts = {})
      defaults = { data_matrix: DATAMATRIX_KEY }
      opts.merge defaults
      raise 'Bad Arguments: cannot get data from a part and specify coords at the same time' if object.is_a?(FieldValue) && opts[:coord]
      if object.is_a?(FieldValue)
        assoc_map = AssociationMap.new(object.collection)
        return assoc_map.getrc(object.row, object.column, key)
      elsif opts[:coord]
        assoc_map = AssociationMap.new(object)
        return assoc_map.getrc(opts[:coord][0], opts[:coord][1], key)
      else # Normal case that deals directly with object
        assoc_map = AssociationMap.new(object)
        return assoc_map.get(key)
      end
    end

    # Adds an association for the data with the key.
    # The data must be serializable.
    #
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param opts [Hash]  Additional Options
    # @option tag  [String]  If putting an Upload, optionally specify an extra label
    def put(key, data, opts = { tag: {} })
      @map[key] = if data.is_a?(Upload)
                    UploadAssoc.new(opts[:tag], data)
                  else
                    data
                  end
    end

    # Adds an association for the data with the key, for
    # a specific row, column coordinate within a collection
    # If the data_matrix for the collection has not been created yet, it is initialized
    #
    # @requires  current object is a Collection, and r,c corresponds to a valid location in the object
    # @param r [Integer]  the row of the part within the collection to associate to
    # @param c [Integer]  the column of the part within the collection to associate to
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    def putrc(row, column, key, data, data_matrix = DATAMATRIX_KEY)
      # if the data_matrix for this collection does not exist yet, initialize it.
      initialize_part_data(data_matrix)
      @map[data_matrix][row][column][key] = data
    end

    # To be called when the object of association is a collection,
    # establishes a matrix parallel to the sample matrix which can
    # be used to store additional information about individual parts
    # Each slot in the matrix will be a new empty hash.
    #
    # @param coll [Collection]  the object for which part-data matrix will be initialized
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    def initialize_part_data(data_matrix = DATAMATRIX_KEY)
      raise "Invalid Method Call: cannot associate part data to an object that isn't a collection" unless @object.is_a?(Collection)
      # TODO: fix the following so that can use the Base method
      # coll = collection_from(@object.id)
      coll = Collection.find(@object.id)
      @map[data_matrix] = Array.new(coll.dimensions[0]) { Array.new(coll.dimensions[1]) { {} } } if @map[data_matrix].nil?
    end

    # Returns the associated data for the key, if any.
    #
    # @param key [String]  the key for the association
    # @returns the data object for the key, `nil` otherwise
    def get(key)
      data = @map[key]
      if data.is_a?(UploadAssoc)
        data.upload
      else
        data
      end
    end

    # Gets an association for the data with the key, for
    # a specific row, column coordinate within a collection
    # Returns the associated data for the key, if any.
    #
    # @requires  current object is a Collection, and r,c corresponds to a valid location in the object
    # @param r [Integer]  the row of the part within the collection to associate to
    # @param c [Integer]  the column of the part within the collection to associate to
    # @param key [String]  the key for the association
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    # @returns the data object for the key, `nil` otherwise
    def getrc(row, column, key, data_matrix = DATAMATRIX_KEY)
      @map[data_matrix][row][column][key] unless @map[data_matrix].nil?
    end

    # Retrieve the associations for all parts of the collection
    # as a matrix.
    # @requires  current object is a collection
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    # @returns  the data matrix, if one exists
    def get_data_matrix(data_matrix = DATAMATRIX_KEY)
      Matrix.rows(@map[data_matrix])
    end

    # Replace or initialize the data matrix for this object
    # with a custom one.
    # @requires  the current object is a collection
    # `matrix` have the same row column dimensions as the collection
    #
    # @param new_matrix [Matrix]  the new data matrix
    # @param data_matrix [String/Symbol]  optionally specify a data matrix (by key) to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix

    def set_data_matrix(matrix, data_matrix = DATAMATRIX_KEY)
      @map[data_matrix] = matrix.to_a
    end

    # Saves the associations in this map to Aquarium.
    def save
      das = []
      @map.each_key do |key|
        if key == DATAMATRIX_KEY
          das.concat save_data_matrix_alt(@object, @map[key])
        elsif @map[key].is_a? UploadAssoc
          # TODO: update this to lazy associate once aq is updated to hav lazy upload assoc (on master, just not on server yet)
          @object.associate(key, @map[key].tag, @map[key].upload)
        else
          das << @object.lazy_associate(key, @map[key])
        end
      end
      DataAssociation.import(das, on_duplicate_key_update: [:object]) unless das.empty?
      @object.save
      nil
    end

    # saves part_data to the data associations of constituent parts.
    # achieves forward compatibility with AQ Part update
    # built off of set_data_matrix from collection.rb
    def save_data_matrix_alt(coll, matrix, offset: [0, 0])
      pm = coll.part_matrix
      das = []

      uniq_keys = matrix.flatten.map(&:keys).flatten.uniq
      dms_by_key = {}
      uniq_keys.each do |key|
        dms_by_key[key] = coll.data_matrix(key)
      end

      coll.each_row_col(matrix, offset: offset) do |x, y, ox, oy|
        next unless !matrix[x][y].nil? && pm[ox][oy] # this part has das
        matrix[x][y].each do |k, v|
          if pm[ox][oy]
            if dms_by_key[k][ox][oy]
              da = dms_by_key[k][ox][oy]
              da.object = { k => v }.to_json
              das << da
            else
              das << pm[ox][oy].lazy_associate(k, v)
            end
          end
        end
      end

      das
    end

    # Returns an array of all the keys in this map
    def keys
      @map.keys
    end

    # Returns the string representation of the map
    def to_string
      @map.to_s
    end

    alias to_s to_string
  end

  # private class that is used to deal with associating upload objects alongside their tag
  class UploadAssoc
    def initialize(tag, upload)
      @upload = upload
      @tag = tag || {}
    end

    def change_tag(new_tag)
      @tag = new_tag
    end

    attr_reader :upload

    attr_reader :tag
  end

  # Utilizes the part-data matrix of collections to store information about the history of
  # parts of a collection. PartProvenance initializes and relies on two fields of every part-data
  # slot: `source` and `destination`.
  # `source` will store a list of item ids (with rc index if applicable),
  # of all the ingredients used to make this part, and destination will use the same data format
  # to record all of the places this part was used in.
  # Item-Item provenance can technically be recorded as well with this library, but it will not
  # be necessary.
  #
  module PartProvenance
    SOURCE = 'source'
    DESTINATION = 'destination'

    # Record an entry to the provenance data between two parts, or a part and an item.
    # This will populate the destination field of `from`, and the source field
    # of the `to` in their respective associations. If from_coord or to_coord is specified, then
    # the associations of the part of the from/to collection at that coordinate will
    # populated instead.
    #
    # @param opts [Hash]  Arguments specifying which objects to record relation for
    # @option from [Item/Collection]  the item or collection where sample transfer originated
    # @option to [Item/Collection]  the item or collection for destination of sample transfer
    # @option from_coord [Tuple Array]  optionally, specify the coordinate selecting a part of the collection, if `to` was a collection
    # @option to_coord [Tuple Array]  optionally, specify the coordinate selecting a part of the collection, if `from` was a collection
    # @option additional_relation_data [Hash]  optionally, add additional key/value pairs to add to both object's routing data
    #                         for this relation. For example, you might want to specify the volume of the transfer,
    #                         or which colony was picked from a plate
    # @option from_map [AssociationMap]  existing AssociationMap for the given from-object, required to successfully associate provenance to
    #                           the `from` item
    # @option to_map [AssociationMap]  existing AssociationMap for the given to-object, required to successfully associate provenance to
    #                           the `to` item
    def add_provenance(opts = {})
      if opts[:from] == opts[:to] # special case: provenance between two parts on the same collection
        opts[:from_map] = opts[:to_map] # ensure from map and to map are the same object for this case
      end

      # creating information hashes to represent `from` and `to` relationship data
      from_info = serialize_as_simple_tag(opts[:from], opts[:from_coord], opts[:additional_relation_data])
      to_info = serialize_as_simple_tag(opts[:to], opts[:to_coord], opts[:additional_relation_data])

      # in destination field of `from`, add information tag representing `to`
      append_to_association(opts[:from_map], DESTINATION, to_info, coord: opts[:from_coord]) if opts[:from_map]

      # in source field of `to`, add information tag representing `from`
      append_to_association(opts[:to_map], SOURCE, from_info, coord: opts[:to_coord]) if opts[:to_map]
    end

    # Retrieves a list of sources that were used to construct the given part
    # of a Collection
    #
    # @param object [FieldValue/Collection]  the part of interest, or the collection which
    #                 contains the part of interest. For the second case, coord must also be specified
    # @param coord [Tuple Array]  the r,c index of the target part
    def sources(object, coord = nil)
      if coord
        AssociationMap.get_associated_data(object, SOURCE, coord: coord)
      else
        AssociationMap.get_associated_data(object, SOURCE)
      end
    end

    # Retrieves a list of destinations that were made using the given part
    # of a Collection
    #
    # @param object [FieldValue/Collection]  the part of interest, or the collection which
    #                 contains the part of interest. For the second case, coord must also be specified
    # @param coord [Tuple Array]  the r,c index of the target part
    def destinations(object, coord = nil)
      if coord
        AssociationMap.get_associated_data(object, DESTINATION, coord: opts[:coord])
      else
        AssociationMap.get_associated_data(object, DESTINATION)
      end
    end

    # For the given associatable target object, appends or concatenates the given datum_to_append to the association
    # at `key` for that object
    #
    # @param association_map [AssocioationMap]  an AssociationMap that will have its associations appended to.
    # @param key [String/Symbol]  The association key which maps to an appendable object
    # @param datum_to_append [Serializable Object]  the element to append to the list at the value for the given key
    # @param opts [Hash]  additional options
    # @option coord [Tuple array]  coordinate of target part, if association target is a collection
    def append_to_association(association_map, key, datum_to_append, opts = {})
      if opts[:coord] # we will be interacting with the associations of a part of a collection if coord is specified
        association_map.putrc(opts[:coord][0], opts[:coord][1], key, []) if association_map.getrc(opts[:coord][0], opts[:coord][1], key).nil?
        association_map.getrc(opts[:coord][0], opts[:coord][1], key) <<  datum_to_append
      else
        association_map.put(key, []) if association_map.get(key).nil?
        association_map.get(key) << datum_to_append
      end
    end

    # Given an item, or a part of a collection, serializes it into a simple tag which can be used to retrieve it.
    #
    # @param item [Item/FieldValue]  can be either an Item, or
    #                         an i/o object corresponding to a part of a collection, which can be thought of
    #                         as constituting a 'sub item'
    def serialize_as_simple_tag(item, coord, additional_info)
      info = if item.collection? && coord
               { id: item.id, row: coord[0], column: coord[1] }
             elsif (item.is_a? Item) || (item.is_a? Collection)
               { id: item.id }
             else
               raise 'Argument is neither a part nor an item'
             end
      info.merge!(additional_info) unless additional_info.nil?
      info
    end
  end
end

library: {name: Centrifuge, category: Standard Libs}
code_source:
# abemill@uw.edu
# This module is made to cover all common cases of directing the tech to
# centrifuge, decant, and resuspend multiple batches of tubes.
# centrifuge_resuspend_cycle is the public method of this module.
# It allows staggered centrifuging so that the tech can be resuspending
# the previous batch while the next batch is centrifuging.
module Centrifuge
  class Batch
    attr_reader :marker, :tubes

    def initialize(args)
      @marker = args[:marker]
      @tubes = args[:tubes]
    end

    # Partition the given tubes list into batches.
    # Returns a list of Batch objects, each having a letter marker, and a list
    # of tubes.
    def self.initialize_batches(tubes, centrifuge_slots, protocol)
      @@protocol = protocol # we need this to use show commands in Batch methods
      @@batch_size = centrifuge_slots
      tube_batches = tubes.each_slice(centrifuge_slots).to_a
      batches = []
      tube_batches.each_with_index do |tube_batch, i|
        batch_id = [(i + 65).chr]
        batches.push Batch.new(marker: batch_id, tubes: tube_batch)
      end
      batches
    end
    
    def self.batch_size
      @@batch_size
    end

    # returns a new list of batches produced by reducing the amount of tubes in
    # each batch and then combining batches, Batches.size will be halved.
    def self.combine_batches(batches)
      paired_batches = batches.each_slice(2).to_a
      batches = []
      paired_batches.each do |pair|
        pair.each_with_index do |batch, i|
          pair[i] = batch.combine_tubes
        end
        batches.push(pair[0].combine_with(pair[1]))
      end
      batches
    end

    # Instructs tech to reduce the number of tubes in the given batch by a power
    # of 2, combining tubes of the same sample. This only shows the instructions
    # and does not alter the state of batches[].
    # (that happens in combine_batches)
    def combine_tubes_instructions()
      batch = self
      @@protocol.show do
        title 'Combine Tubes'
        if batch.marker.length == 1
          note 'Reduce the number of tubes in '\
               "<b>batch #{batch.marker.to_sentence}</b> from #{batch.tubes.length} "\
               "to #{batch.tubes.length / 2} by combining tubes."
        else
          note "Together, <b>batches #{batch.marker.to_sentence}</b> have a "\
               "total of #{batch.tubes.length} tubes. Reduce the sum of tubes to "\
               "#{batch.tubes.length / 2} by combining tubes from "\
               "#{batch.marker.length == 2 ? 'both' : 'all'} batches."
        end
        note 'Combine tubes by carefully pouring one tube into tube '\
             'that shares the same id.'
        note 'All tubes after combination should have the same volume. '\
             'Do not "double combine" any tubes.'
        batch.tubes.uniq.each do |tube|
          note "Combine each tube labeled <b>#{tube}</b> "\
               "with another tube labeled <b>#{tube}</b>."
        end
        if Cycle.cold?
          warning 'Once finished with combining, '\
                  'immediately place tubes in ice bath.'
        end
      end
    end

    # instructions to place tubes from batch into the centrifuge
    def centrifuge(centrifuge_instructions)
      rpm = centrifuge_instructions[:rpm]
      time = centrifuge_instructions[:time]
      temp = centrifuge_instructions[:temp]
      batch = self
      @@protocol.show do
        title 'centrifuge tubes'
        note "Set the centrifuge to #{rpm} rpm for #{time} minutes at "\
             "#{temp} C. Ensure correct centrifuge tube holders are in place."
        note "Move all tubes from <b>#{'batch'.pluralize(batch.marker.length)} "\
             "#{batch.marker.to_sentence}</b> to centrifuge and press start."
        if batch.tubes.length.odd?
          warning 'Balance the centrifuge with a dummy tube that is filled '\
                  'with the same volume of liquid as the other tubes.'
        end
      end
    end

    # instructions to remove tubes from the centrifuge
    # after it has finished a spin
    def remove_tubes()
      batch = self
      @@protocol.show do
        title 'Remove Tubes from Centrifuge'
        note 'Wait for centrifuge to finish'
        note 'Once the centrifuge has finished its spin, '\
             'remove tubes from centrifuge.'
        note "The removed tubes should be marked as "\
             "<b>#{'batch'.pluralize(batch.marker.length)} "\
             "#{batch.marker.to_sentence}</b>."
        if Cycle.cold?
          warning 'Once removed from centrifuge, '\
                'immediately place tubes in ice bath.'
        end
      end
    end

    # instructions to resuspend tubes
    def resuspend(resuspend_instructions)
      volume = resuspend_instructions[:volume]
      media = resuspend_instructions[:media]

      decant()

      batch = self
      @@protocol.show do
        title "Resuspend cells in #{volume}mL of #{media}"
        note "Grab bottle of #{media} from fridge."
        note "Carefully pour #{volume}mL of #{media} into each tube from <b>"\
             "#{'batch'.pluralize(batch.marker.length)} #{batch.marker.to_sentence}</b>."
        note 'Shake and vortex tubes until pellet is completely resuspended.'
        warning 'When not actively shaking or vortexing keep tubes in ice, '\
                'and place all tubes in ice once resuspended.' if Cycle.cold?
        note "At next opportunity, bring #{media} back to fridge, "\
             'or to dishwasher if empty.'
      end
    end

    def decant()
      batch = self
      @@protocol.show do
        title 'Decant tubes'
        note "Take #{Cycle.cold? ? 'ice bucket' : 'tubes'} to the "\
             "dishwasing station, and pour out supernatant of tubes from <b>"\
             "#{'batch'.pluralize(batch.marker.length)} #{batch.marker.to_sentence}</b>."
        note 'Place tubes in ice immediately after decanting.' if Cycle.cold?
      end
    end

    # returns new batch which is the combination of this batch
    # and the other batch
    # helper for combine_batches
    def combine_with(other)
      if other
        new_marker = marker.concat other.marker
        new_tubes = tubes.concat other.tubes
        return Batch.new(marker: new_marker, tubes: new_tubes)
      else
        return self
      end
    end

    # returns a new batch with a half the tubes, where like tubes have been
    # combined.
    # helper for combine_batches
    def combine_tubes
      new_tubes = []
      new_tubes.concat(tubes)
      batch = Batch.new(marker: marker,tubes: [])
      tubes.uniq.each do |short_id|
        sameids = new_tubes.select { |tube| tube == short_id }
        batch.tubes.concat(sameids[0, sameids.length / 2])
      end
      batch
    end
  end

  class Cycle
    attr_reader :centrifuge_instructions, :resuspend_instructions
    def initialize(cycle_instructions)
      @centrifuge_instructions = { temp: cycle_instructions[:cent_temp],
                                   rpm: cycle_instructions[:cent_rpm],
                                   time: cycle_instructions[:cent_time] }

      @resuspend_instructions = { media: cycle_instructions[:sus_media],
                                  volume: cycle_instructions[:sus_volume] }

      @combine = cycle_instructions[:combine]
    end

    def self.initialize_cycles(cycles_data, cold)
      @@cold = cold
      cycles = cycles_data.map do |cycle_data|
        Cycle.new(cycle_data)
      end
      cycles
    end

    def self.cold?
      @@cold
    end

    def combine?
      @combine
    end
  end

  ##
  # @param [Hash] opts  The parameters which indicate cycling behaivor
  # @option [Array<Item>] items  The array of items for which each will
  #           be split into smaller tubes and then centrifuge cycled on.
  # @option [Float] start_vol  Volume of liquid that each item begins with.
  # @option [Float] tube_vol  Volume of centrifuge tubes that
  #           start_vol will be divided amongst
  # @option [Integer] centrifuge_slots  Number of slots in the centrifuge.
  #           Must be an even number.
  # @option [Array<Hash>] cycles  Instructions for each cycle of centrifuging.
  #           Cycles.length indicates how many centrifuge/wash cycles.
  #           Elements of cycles contain instructions for the centrifuging
  #           and resuspension settings for that cycle.
  # @option [Boolean] :cold  Indicate if centrifuge cycling is done on ice.
  #           Default: no
  # @option [Symbol] :cb_extra_instructions  Extra instructions for tech
  #           while waiting for final centrifuge batch to finish,
  #           for example, tidying up workspace. Default: none
  # @effects  This method Instructs tech to do cycles of centrifuging,
  #           decanting, and resuspending on each item
  #           as per the instructions stored in cycles.
  def centrifuge_resuspend_cycle(opts = {})
    # Bench setup is required before we begin centrifuging
    # During setup, the items will be aliquoted into tubes,
    # and each aliquoted tube will be marked with a short id.
    # This maps tubes to the item they originated from, and will
    # keep track of which tubes contain the same substance.
    # the index of the parent item in the items[] is used
    # for the short id.
    # Also, tubes are grouped into batches that will fit in centrifuge,
    # and marked with a capital letter batch identifier, in addition to their
    # short id that indicates their ancestry.

    # computation
    tubes = initialize_tubes(opts)
    batches = Batch.initialize_batches(tubes, opts[:centrifuge_slots], self)
    cycles = Cycle.initialize_cycles(opts[:cycles], opts[:cold])

    # tech instructions
    setup_steps(cycles, batches,
              opts[:start_vol], opts[:tube_vol], opts[:items])

    # Loop through each cycle of centrifuging and resuspending found in cycles[]
    # and perform that cycle on each batch of tubes in found in batches[]
    this_batch = nil
    cycles.each_with_index do |cycle, i|
      prev_cycle = cycles[i - 1]
      
      # Reconfigure batches array to be shortened by combing batches
      # so each batch has enough tubes to fill centrifuge.
      batches = Batch.combine_batches(batches) if prev_cycle.combine?

      batch_iterator = batches.each
      first_batch = batch_iterator.next
      if i.zero?
        # first batch of first cycle, the centrifuge is empty
        first_batch.centrifuge(cycle.centrifuge_instructions)
      else
        this_batch.remove_tubes
        if batches.length == 1
          # this_batch == first_batch || first_batch contains this_batch
          this_batch.resuspend(prev_cycle.resuspend_instructions)
          this_batch.combine_tubes_instructions if prev_cycle.combine?
          first_batch.centrifuge(cycle.centrifuge_instructions)
        else
          # first_batch and this_batch are not associated,
          # we can start centrifuging first_batch before we resuspend this_batch
          first_batch.centrifuge(cycle.centrifuge_instructions)
          this_batch.resuspend(prev_cycle.resuspend_instructions)
          this_batch.combine_tubes_instructions if prev_cycle.combine?
        end
      end

      this_batch = first_batch
      while has_next? batch_iterator
        next_batch = batch_iterator.next
        this_batch.remove_tubes
        next_batch.centrifuge(cycle.centrifuge_instructions)
        this_batch.resuspend(cycle.resuspend_instructions)
        this_batch.combine_tubes_instructions if cycle.combine?
        this_batch = next_batch
      end
    end

    # Show any extra steps specified by client to do
    # while waiting for last spin to finish.
    extra_instructions(opts[:cb_extra_instructions])

    final_cycle = cycles.last
    this_batch.remove_tubes
    this_batch.resuspend(final_cycle.resuspend_instructions)
    if final_cycle.combine?
      this_batch.combine_tubes_instructions
      batches = Batch.combine_batches(batches)
    end

    # On remaining tubes,
    # replaces the short id with the id of original parent item.
    relabel_tubes(batches, opts[:items])
  end

  private

  # Ensures state of variables is acceptable
  # TODO add more checks
  def error_checks(cycles, batches, opts)
    raise 'odd slot centrifuge not supported' if Batch.batch_size.odd?
    raise 'wrong cycle amount' if cycles.length != opts[:cycles].length
    raise 'wrong batch size' if Batch.batch_size != opts[:centrifuge_slots]
  end

  # Initializes array of integers that represent tubes
  # identified by their short_id which corresponds to the parent item.
  # Also returns
  def initialize_tubes(opts)
    combination_occurs = opts[:cycles].any? { |cycle| cycle[:combine] == true }
    tubes_per_item = (opts[:start_vol] / opts[:tube_vol]).floor
    tubes_per_item += 1 if tubes_per_item.odd? && combination_occurs
    tubes = []
    opts[:items].each_with_index do |_item, i|
      tubes_per_item.times do
        tubes.push (i + 1)
      end
    end
    tubes
  end

  # Gives the tech instructions to prepare for centrifuging.
  def setup_steps(cycles, batches, start_vol, tube_vol, items)
    tubes = batches.map { |batch| batch.tubes }.flatten

    fetch_supplies(cycles, tubes.length, tube_vol)
    if Cycle.cold?
      prepare_ice_bath
      chill_tubes(tubes.length, tube_vol)
    end
    aliquot_items_to_tubes(items, tubes, start_vol, tube_vol)
    batch_tubes_instructions(batches)
  end

  # Instructs tech to fetch all the media and tubes that will be required.
  def fetch_supplies(cycles, num_tubes, tube_vol)
    media_to_volume = calculate_media_volumes(cycles, num_tubes)

    media_location = 'on bench'
    tube_location = 'on bench'
    if Cycle.cold?
      media_location = 'in fridge'
      tube_location = 'in freezer'
    end

    show do
      title 'Grab required suspension media'
      note 'For the following set of centrifuging instructions, you will need'\
           ' the following supplies: '
      media_to_volume.each do |media, volume|
        check "At least #{volume}mL of #{media}"
      end
      note "Place all media bottles #{media_location}"\
           ' in preparation for centrifuge.'
      note "Place #{num_tubes} #{tube_vol}mL tubes #{tube_location}"\
           ' in preparation for centrifuge.'
    end
  end

  def calculate_media_volumes(cycles, num_tubes)
    media_to_volume = Hash.new
    media_list = cycles.map do |cycle|
      cycle.resuspend_instructions[:media]
    end.uniq

    media_list.each do |media|
      volumes = cycles.select { |cycle|
        cycle.resuspend_instructions[:media] == media
      }.map { |cycle|
        cycle.resuspend_instructions[:volume]
      }
      total_volume = volumes.sum * num_tubes
      media_to_volume[media] = total_volume
    end
    media_to_volume
  end

  # Instructs tech to make an ice bath and immerse empty tubes in it.
  def prepare_ice_bath
    show do
      title 'Go to Bagley to get ice (Skip if you already have ice)'
      note 'Walk to ice machine room on the second floor in Bagley with a '\
           'large red bucket, fill the bucket  full with ice.'
      note 'If unable to go to Bagley, use ice cubes to make a water bath (of '\
           'mostly ice) or use the chilled aluminum bead bucket. (if using '\
           'aluminum bead bucket place it back in freezer between spins)'
    end
  end

  def chill_tubes(num_tubes, tube_vol)
    show do
      title 'Prepare chilled tubes'
      note "Take the #{num_tubes} #{tube_vol}mL "\
            "#{'tube'.pluralize(num_tubes)} from the freezer "\
            'and immerse in ice bath.'
    end
  end

  # Instructs the tech to divide the volume of each item in items[] into
  # equivolume aliquots for centrifuging.
  def aliquot_items_to_tubes(items, tubes, start_vol, tube_vol)
    tubes_per_item = tubes.length / items.length
    aliquot_amount = [start_vol / tubes_per_item, tube_vol].min

    show do
      title "Aliquot items into #{tube_vol}mL tubes for centrifuging"
      note 'You should have '\
           "#{items.length * tubes_per_item} #{tube_vol}mL tubes."
      if Cycle.cold?
        note 'While labeling and pouring, '\
             'leave tubes in ice bath as much as possible.'
      end
      items.each_with_index do |item, i|
        note "Label #{tubes_per_item} tubes with short id: <b>#{i + 1}</b>"
        note "Carefully pour #{aliquot_amount}mL from #{item} "\
             "into each tube labeled as <b>#{i + 1}</b>."
      end
      
      if Cycle.cold?
        note 'Leave tubes to chill for for 30 minutes.'
        timer initial: { hours: 0, minutes: 30, seconds: 0}
      end
    end
  end
  
  # Instructs the tech to group tubes into batches
  # that will fit into the centrifuge
  def batch_tubes_instructions(batches)
    show do
      title "separate tubes into batches of #{Batch.batch_size} or less"
      note 'Group tubes into batches as shown and mark each tube '\
           'with its alphabetic batch identifier.'
      batches.each do |batch|
        check "<b>#{batch.tubes.to_sentence}</b>: "\
              "batch <b>#{batch.marker}</b>"
      end
    end
  end
  
  # Callback which runs client specified method during the time when
  # the tech is waiting for the last batch of tubes to finish centrifuging.
  def extra_instructions(method_name)
    method(method_name.to_sym).call if method_name && (method_name != '')
  end

  # After centrifuging finishes, instruct tech to relabel the resulting tubes
  # with the id of the item that they originated from, for convienence.
  def relabel_tubes(batches, items)
    result_tubes = batches.map { |batch| batch.tubes }.flatten
    show do
      title 'Label Finished Tubes'
      note 'Tubes with the following ids remain: '\
           "<b>#{result_tubes.to_sentence}</b>."
      note 'Label each tube with the item id '\
           'of the item that they originated from.'
      items.each_with_index do |item, i|
        note "The tube(s) labeled as <b>#{i + 1}</b> "\
             "should be relabeled as <b>#{item.id}</b>."
      end
    end
  end

  # Helper method that allows manual iteration like in java
  # when used alongside enumerator.next()
  def has_next?(enum)
    enum.peek
    return true
  rescue StopIteration
    return false
  end
end

library: {name: CommonInputOutputNames, category: Standard Libs}
code_source:
module CommonInputOutputNames

    INPUT_YEAST = 'Yeast Culture'
    OUTPUT_YEAST = 'Yeast Culture'
    MEDIA = 'Media'
    DNA = 'DNA'
    
    INPUT_SAMPLE = 'Input Sample'
    OUTPUT_SAMPLE = 'Output Sample'

    FORWARD_PRIMER = 'Forward Primer'
    REVERSE_PRIMER = 'Reverse Primer'
    TEMPLATE = 'Template'
    FRAGMENT = 'Fragment'
    PROGRAM = 'Program'
    PRIMER_PLATE = '96-Well Primer Aliquot Plate'

end

library: {name: Debug, category: Standard Libs}
code_source:
module Debug
  def print_object obj
    if [Numeric, String].any? { |c| obj.is_a? c }
      obj
    elsif [Array].any? { |c| obj.is_a? c }
      obj.map { |item| print_object item }
    elsif [Hash].any? { |c| obj.is_a? c }
      Hash[obj.map { |k, v| [k, print_object(v)] }]
    else
      s = obj ? obj.id.to_s : ""
      s += " #{obj.name}" if obj.class.method_defined? :name
      s
    end
  end

  def log_info *args
    if debug
      show do
        title "Debug slide (#{args.length} #{"arg".pluralize args.length})"

        args.each do |arg|
          note "#{arg.class}: #{print_object arg}"
        end
      end
    end
  end

  def inspect(object, ident=nil)
    show do
      title "<span style=\"background-color:yellow\">INSPECTING #{ident} (#{object.class})</span>"
      if object.kind_of?(Array)
        table object
      else
        note object.to_json
      end
    end
  end
end

library: {name: Feedback, category: Standard Libs}
code_source:
module Feedback
  CONTAINER_NAME = "Feedback (Virtual)"
  SAMPLE_TYPE_NAME = "Operation Feedback"
  
  # This method will prompt the technician to write feedback for the operations
  # that they complete on each job. This feedback will be associated to an item
  # that represents each operation type.
  def get_protocol_feedback
    
    # Gets feedback from the user
    if debug
      feedback = "testing for job id"
    else
      feedback = ask_for_feedback
    end
    
    if(!feedback.blank?)
      associate_feedback feedback
    end
    
    if debug
      print_association
    end
    
  end
  
  # Associates the feedback entered by the lab technician to the OperationType of the protocol
  # that uses this library.
  #
  # @param [String] the feedback entered by the lab technician.
  def associate_feedback feedback
    operation = OperationType.find(operation_type.id)
    feedback = feedback + "- job #{jid}"
  
    feedback_array = []
    if(!operation.get(:feedback).nil?)
      feedback_array = operation.get(:feedback)
    end
    feedback_array.push(feedback)
    operation.associate :feedback, feedback_array
  end
  
  # Debugging method that prints all associations
  def print_association
    operation = OperationType.find(operation_type.id)
    feedback_array = operation.get(:feedback)
    if feedback_array
      show do
        title "This is printing because debug is on"
        note "#{feedback_array}"
      end
    end
  end
  
  # Returns the feedback entered by a lab technician.
  #
  # @return [Hash] the information returned by the feedback show block
  def ask_for_feedback
    feedback = show do
      title "We want your feedback"
      
      note "Notice anything weird with this protocol? Tell us below!"
      
      get "text", var: "feedback_user", label: "Enter your feedback here", default: ""
    end
    feedback[:feedback_user] # return
  end

end

library: {name: InputOutput, category: Standard Libs}
code_source:
module InputOutput
  def add_static_inputs ops, name, sample_name, container_name
    ops.each do |op|
      sample = Sample.find_by_name(sample_name)
      container = ObjectType.find_by_name(container_name)
      op.add_input name, sample, container
      op.input(name).set item: sample.in(container.name).first
    end
  end
  
  def get_inputs_checked input_name
    show do
      title "Gather the following item(s)"
       
      operations.each do |op|
        check "#{op.input(input_name).item.id}: #{op.input(input_name).sample.name} at <b>#{op.input(input_name).item.location}</b>"
      end
    end
  end
end

library: {name: ItemActions, category: Standard Libs}
code_source:
# frozen_string_literal: true

# Assists with basic actions of items (eg trashing, moving, etc)

module ItemActions
  # Store all items used in input operations
  # Assumes all inputs are non nil
  #
  # @param operations [OperationList] the list of operations
  # @param location [String] the storage location
  # @param type [String] the type of items to be stored('item', 'collection')
  def store_inputs(operations, location: nil, type: nil)
    store_io(operations, role: 'input', location: location, type: type)
  end

  # Stores all items used in output operations
  # Assumes all outputs are non nil
  #
  # @param operations [OperationList] the operation list where all
  #     output collections should be stored
  # @param location [String] the storage location
  # @param type [String] the type of items to be stored ('item', 'collection')
  def store_outputs(operations, location: nil, type: nil)
    store_io(operations, role: 'output', location: location, type: type)
  end

  # Stores all items of a certain role in the operations list
  # Creates instructions to store items as well
  #
  # @param operations [OperationList] list of Operations
  # @param role [String] whether material to be stored is an input or an output
  # @param location [String] the location to store the material
  # @param all_items [Boolean] an option to store all items not just collections
  # @param type [String] the type of items to be stored ('item', 'collection')
  def store_io(operations, role: 'all', location: nil, type: nil)
    items = Set[]; role.downcase!; type.downcase!
    operations.each do |op|
      field_values = if role == 'input'
                       yield op.inputs
                     elsif role == 'output'
                       yield op.outputs
                     else
                       yield (op.outputs + op.inputs)
                     end

      unless type.nil?
        if type == 'collection'
          field_values.reject! { |fv| fv.object_type.handler == 'collection' }
        elsif type == 'item'
          field_values.select! { |fv| fv.object_type.handler == 'collection' }
        end
      end

      items.concat(field_values.map(&:item))
    end
    store_items(items, location: location)
  end

  # Instructions to store a specific item
  # TODO have them move the items first then move location in AQ
  #
  # @param items [Array<items>] the things to be stored
  # @param location [String] Sets the location of the items if included
  def store_items(items, location: nil)
    set_locations(items, location) unless location.nil?
    tab = create_location_table(items)
    show do
      title 'Put Away the Following Items'
      table tab
    end
  end

  # Sets the location of all objects in array to some given locations
  #
  # @param items Array[Collection] or Array[Items] an array of any objects
  # that extend class Item
  # @param location [String] the location to move object to
  # (String or Wizard if Wizard exists)
  def set_locations(items, location)
    items.each do |item|
      item.move_to(location)
      item.save
    end
  end

  # Directions to layout materials for easy use
  #
  # @materials [Array<items>]
  def layout_materials(materials)
    show do
      title 'Layout Materials'
      note 'Please set out the following items for easy access'
      table create_location_table(materials)
    end
  end

  # Directions to retrieve materials
  #
  # @materials [Array<items>]
  def retrieve_materials(materials)
    show do
      title 'Retrieve Materials'
      note 'Please get the following items'
      table create_location_table(materials)
    end
  end

  # Creates table directing technician on where to store materials
  #
  # @param collection [Collection] the materials that are to be put away
  # @return location_table [Array<Array>] of Collections and their locations
  def create_location_table(items)
    location_table = [['ID', 'Object Type', 'Location']]
    items.each do |item|
      location_table.push([item.id, item.object_type.name, item.location])
    end
    location_table
  end

  # Gives directions to throw away objects (collection or item)
  #
  # @param items [Array<items>] Items to be trashed
  # @param hazardous [boolean] if hazardous then true
  def trash_object(items, waste_container: 'Biohazard Waste')
    set_locations(items, location: waste_container)
    tab = create_location_table(items)
    show do
      title 'Properly Dispose of the following items:'
      table tab
    end
    items.each { |item| item.mark_as_deleted }
  end
end

library: {name: LabwareNames, category: Standard Libs}
code_source:
needs "Standard Libs/Units"

module LabwareNames
    include Units
    
    # Tubes
    TUBE_50_ML_CONICAL = "50 #{MILLILITERS} conical tube"
    TUBE_15_ML_CONICAL = "15 #{MILLILITERS} conical tube"
    TUBE_MICROFUGE = "1.5 #{MILLILITERS} microcentrifuge tube"
    TUBE_MICROCENTRIFUGE = TUBE_MICROFUGE
    
    # Plates
    PCR_PLATE = "0.2 #{MILLILITERS} PCR plate"
    
    # Misc
    "96-well -20#{DEGREES_C} cold blocks"
end

library: {name: MatrixTools, category: Standard Libs}
code_source:
# Module containing WellMatrix Class
#
module MatrixTools
  require 'matrix'
  # Defines a wrapper for a 2D array containing data for each of the wells of a
  # 24 or 96 well plate.
  #
  # A WellMatrix object can be easily converted to or from a ruby Matrix as
  # needed to allow the use of matrix operations.
  #
  class WellMatrix
    # Initializes a WellMatrix object using an array of rows.
    #
    # @param rows [Array<Array<Object>>]  the rows of the matrix
    # @raises [WellMatrixInvalidDimensionsError]
    #              if `rows` is not size 24 or 96
    #              or if `rows` does not have consistent column size
    def initialize(rows)
      @rows = rows
      check_rep
    end

    # Returns a new WellMatrix as a copy of the given Matrix.
    #
    # @param matr [Matrix]  the Matrix from which to construct a new WellMatrix
    # @returns [WellMatrix]  new WellMatrix object with identical elements
    #          as the passed in Matrix
    # @raises [WellMatrixInvalidDimensionsError]  if `matrix`
    #                                       is not size 24 or 96
    def self.from_matrix(matrix)
      WellMatrix.new(matrix.to_a)
    end

    # Returns a new WellMatrix as a copy of the given 2D Array.
    #
    # @param array_2D [Array<Array<Object>>]  the 2D array which will be used
    #              to construct a new WellMatrix
    # @returns [WellMatrix]  new WellMatrix with identical elements
    #          to the passed in 2D Array
    # @raises [WellMatrixInvalidDimensionsError]
    #                        if `array_2D` is not size 24 or 96
    #                        or if `array_2D` does not have consistent column size
    def self.from_array(array_2D)
      # copy input array (1 level deep)
      rows = Array.new(array_2D.size) do |i|
        Array.new(array_2D[i].size) { |j| array_2D[i][j] }
      end
      # return new WellMatrix created from copy of given array
      WellMatrix.new(rows)
    end

    # Returns a new 'empty' WellMatrix of the given plate size.
    #
    # @param size [Integer]  the size of the plate for which the
    #             matrix is built. 24 or 96 only
    # @param initial [Object] the initial value of all elements in
    #                the 2D array, default is nil
    # @returns [WellMatrix]  a new WellMatrix of the correct dimensions
    #          for the given plate size,
    #          initially populated with default elements
    # @raises [WellMatrixInvalidDimensionsError]  if `size` is not 24 or 96
    def self.create_empty(size, initial = nil)
      if size == 24
        rows = Array.new(4) { Array.new(6, initial) }
      elsif size == 96
        rows = Array.new(8) { Array.new(12, initial) }
      else
        raise WellMatrixInvalidDimensionsError.new,
              'Size of matrix is not 24 or 96'
      end
      WellMatrix.new(rows)
    end

    # Returns the number of rows of the matrix.
    #
    # @return [Integer]  the number of rows in this WellMatrix
    def row_count
      @rows.size
    end

    # Returns the number of columns of the matrix.
    #
    # @return [Integer]  the number of columns in this  WellMatrix
    def column_count
      @rows[0].size
    end

    # Gets an element from the matrix using numeric coordinates.
    #
    # @param i [Integer]  the 0-based row of the desired element
    # @param j [Integer]  the 0-based column of the desired element
    # @return [Object]  the element of the matrix at index `i`, `j`
    # @raises  [WellMatrixIndexOutOfBoundsError]  if the given index is out of bounds
    def [](i, j)
      if in_bounds?(i, j)
        @rows[i][j]
      else
        raise WellMatrixIndexOutOfBoundsError.new,
              "index #{i},#{j} is out of bounds "\
              "0,0...#{row_count},#{column_count}"
      end
    end

    # Gets an element from the matrix using alphanumeric coordinates.
    #
    # @param alpha_coord [String]  the row column pair of the desired element,
    #                     encoded as an alphanumeric coordinate
    # @return [Object]  the element of the matrix at the
    #                   index specified by `alpha_coord`
    def get(alpha_coord)
      coord = WellMatrix.numeric_coordinate(alpha_coord)
      self[coord[0], coord[1]]
    end

    # Sets an element of the matrix using numeric coordinates.
    #
    # @param i [Integer]  the 0-based row of the element to set
    # @param j [Integer]  the 0-based column of the element to set
    # @param value [Object]  the element to put in the specified index
    # @effect  sets element of the matrix at index `i`, `j` to `value`
    # @raises  [WellMatrixIndexOutOfBoundsError]  if the given index is out of bounds
    def []=(i, j, value)
      if in_bounds?(i, j)
        @rows[i][j] = value
      else
        raise WellMatrixIndexOutOfBoundsError.new,
              "index #{i},#{j} is out of bounds "\
              "0,0...#{row_count},#{column_count}"
      end
    end

    # Sets element of the matrix using alphanumeric coordinates.
    #
    # @param alpha_coord [String]  the row column pair of the element to set,
    #                    encoded as an alpha numeric coordinate
    # @param value [Object]  what to put in the specified index
    # @effect  sets element of the matrix at the index specified
    #          by `alpha_coord` to `value`
    def set(alpha_coord, value)
      coord = WellMatrix.numeric_coordinate(alpha_coord)
      self[coord[0], coord[1]] = value
    end

    # Return a copy of the matrix formatted as a 2D Array.
    #
    # @return [Array<Array<Object>>]  copy of this WellMatrix as basic 2D Array
    def to_array
      # defensive copying required
      # walk through, copy columns, retain element references
      Array.new(row_count) do |i|
        Array.new(column_count) { |j| @rows[i][j] }
      end
    end

    alias to_a to_array

    # Return a copy of the matrix formatted as a ruby Matrix.
    #
    # @return [Matrix]  copy of this WellMatrix as Matrix
    def to_matrix
      Matrix.rows(@rows)
    end

    alias to_m to_matrix

    # Return a copy of the matrix.
    #
    # @return [WellMatrix]  copy of this WellMatrix
    def clone
      arr = to_array
      from_array(arr)
    end

    # Creates a 2d array copy of the given WellMatrix for display with the `table` command.
    # This display table highlights cells in purple based on a custom condition.
    # The resulting table only displays the positions of the WellMatrix, not the elements themselves.
    #
    # @param [&block]  the condition evaluated on each element in the matrix which decides
    #           whether a particular cell is highlighted
    # @return [Array]  an array copy of the WellMatrix, augmented with colors, and without original data
    def display_position_table
      new_table = to_array
      row_count.times do |rr|
        column_count.times do |cc|
          rr_well = 'A'.ord.to_i + rr # ascii value for A-H, use .chr to convert to ascii character
          cc_well = cc + 1 # number
          if yield(self[rr, cc])
            new_table[rr][cc] = { content: "#{rr_well.chr}#{cc_well}", style: { background: '#e6e6ff' } } # purple
          else
            new_table[rr][cc] = { content: "#{rr_well.chr}#{cc_well}", style: { background: '#000000' } } # black
          end
        end
      end
      new_table
    end

    # Creates a 2d array copy of the given WellMatrix for display with the `table` command.
    # This display table highlights cells in purple based on a custom condition.
    # Allows the tech to view the contents of each element in the WellMatrix.
    #
    # @param [&block]  the condition evaluated on each element in the matrix which decides
    #           whether a particular cell is highlighted
    # @return [Array]  an array copy of the WellMatrix augmented with colors
    def display_table
      new_table = to_array
      row_count.times do |rr|
        column_count.times do |cc|
          if yield(self[rr, cc])
            new_table[rr][cc] = { content: self[rr, cc].to_s, style: { background: '#e6e6ff' } } # purple
          else
            new_table[rr][cc] = { content: self[rr, cc].to_s, style: { background: '#000000' } } # black
          end
        end
      end
      new_table
    end

    # Convert alphanumeric well coordinate to 0-based integer coordinate pair
    # Alphanumeric coordinate has a single uppercase letter representing the
    # row, and a 1-based number representing a column
    # So, "A01" is the well in the upper left
    #
    # @param alpha_num_coordinate [String]  the input alphanumeric coordinate
    # @return [Array<Integer>]  the coordinate converted to a size 2
    #          for the numeric 0-based row and column pair
    def self.numeric_coordinate(alpha_num_coordinate)
      mymatch = /(?<myrow>[A-Z]{1,1})(?<mycol>[0-9]{1,2})/
                .match(alpha_num_coordinate)
      # subtract ascii value of "A" from A-H to get row integer 0-6
      rr = mymatch[:myrow].ord.to_i - 'A'.ord
      cc = mymatch[:mycol].to_i - 1
      [rr, cc]
    end

    # Returns true if the given coordinate is in the bounds of this matrix,
    # false otherwise.
    #
    # @param i [Integer]  the 0-based row of the target element
    # @param j [Integer]  the 0-based column of the target element
    # @return [Boolean]  truth value of whether the `i`, `j` corresponds
    #         to a coherent location in this WellMatrix
    private def in_bounds?(i, j)
      if i >= row_count || j >= column_count || i < 0 || j < 0
        false
      else
        true
      end
    end

    # Throws errors if this WellMatrix is not of the correct internal structure.
    #
    # @raises [WellMatrixInvalidDimensionsError]  when the dimensions of this
    #         WellMatrix are incorrect
    private def check_rep
      num_rows = row_count
      num_cols = column_count
      if @rows.map(&:size).uniq.size > 1
        raise WellMatrixInvalidDimensionsError.new,
              'Row sizes are not consistent'
      end
      unless (num_rows == 4 && num_cols == 6) ||
             (num_rows == 8 && num_cols == 12)
        raise WellMatrixInvalidDimensionsError.new,
              'Size of matrix is not 24 or 96'
      end
    end
  end

  # Error indicating that the dimensions of a WellMatrix do not correspond
  # to the expected dimensions of a 24 or 96 well plate.
  #
  class WellMatrixInvalidDimensionsError < StandardError; end

  # Error indicating that there was an attempted access at an impossible index
  # in a WellMatrix
  #
  class WellMatrixIndexOutOfBoundsError < IndexError; end
end

library: {name: OperationErrors, category: Standard Libs}
code_source:
# OperationErrors provides methods for dealing with operations that
#   are errored out during a Job
#
module OperationErrors

    # Creates and displays a table of all Operations that are errored
    # @todo Make it so that associations that are not errors are not listed\
    #
    def report_errors
        return unless operations.errored.present?
        
        error_table = [["Operation ID", "Error", "Message"]]
        
        operations.errored.each do |op|
            op.associations.each do |k, v|
                row = []
                row << op.id
                row << k
                row << v
                error_table << row
            end
        end
        
        show do
            title "Some Operations Have Errors"
            note "Some rows may not represent error conditions, but each Operation listed has at least one fatal error."
            table error_table
            warning "Consult with the lab manager about whether to abort this Job."
        end
    end
    
end

library: {name: Pipettors, category: Standard Libs}
code_source:
needs "Standard Libs/Units"

module Pipettors

  include Units

  # Creates string with directions on which pipet to use and what
  # to pipet to/from
  #
  # @param volume [{qty: int, unit: string}] the volume per Standard Libs Units
  # @param source: [String] the source to pipet from
  # @param destination: [String]the destination to pipet
  # @param type [String] the type of pipettor if a specific one is desired
  # @return [String] directions
  def pipet(volume:, source:, destination:, type: nil)
    pipettor = get_single_channel_pipettor(volume: volume,
                                           type: type)
    pipettor.pipet(
      volume: volume,
      source: source,
      destination: destination
    )
  end

  # Creates string with directions on which multi channel pipet to use and what
  # to pipet to/from
  #
  # @param volume [{qty: int, unit: string}] the volume per Standard Libs Units
  # @param source: [String] the source to pipet from
  # @param destination: [String]the destination to pipet
  # @param type [String] the type of pipettor if a specific one is desired
  # @return [String] directions
  def multichannel_pipet(volume:, source:, destination:, type: nil)
    pipettor = get_multi_channel_pipettor(volume: volume, type: type)
    pipettor.pipet(
      volume: volume,
      source: source,
      destination: destination,
    )
  end

  # Returns a single channel pipet depending on the volume
  # 
  # @param volume [{qty: int, unit: string}] the volume per Standard Libs Units
  # @param type [String] the type of pipettor if a specific one is desired
  # @return [Pipet] A class of pipettor
  def get_single_channel_pipettor(volume:, type: nil)
    qty = type.present? ? Float::INFINITY : volume[:qty]
    if type == P2::NAME || qty <= 2
      P2.instance
    elsif type == P20::NAME || qty <= 20
      P20.instance
    elsif type == P200::NAME || qty <= 200
      P200.instance
    elsif type == P1000::NAME || qty <= 1000
      P1000.instance
    elsif qty <= 2000
      P1000.instance
    elsif type == PipetController::NAME || qty > 2000
      PipetController.instance
    end
  end

  # Returns a multi channel pipet depending on the volume
  # 
  # @param volume [{qty: int, unit: string}] the volume per Standard Libs Units
  # @param type [String] the type of pipettor if a specific one is desired
  # @return [Pipet] A class of pipettor
  def get_multi_channel_pipettor(volume:, type: nil)
    qty = type.present? ? Float::INFINITY : volume[:qty]
    if type == P8X200::NAME || qty <= 200
      P8X200.instance
    elsif type == PA6X1200::NAME || qty <= 1000
      PA6X1200.instance
    end
  end

  # TODO add comment
  class Pipettor
    include Singleton
    include Units

    # Gives directions to use pipet
    #
    # @param volume [{qty: int, unit: string}] the volume per Standard Libs Units
    # @param source: [String] the source to pipet from
    # @param destination: [String]the destination to pipet
    # @return [String] directions
    def pipet(volume:, source:, destination:)
      max_volume = self.class::MAX_VOLUME
      if volume[:qty] <= max_volume
        volume[:qty] = volume[:qty].round(self.class::ROUND_TO) 
        a = "Set a <b>#{self.class::NAME}</b> pipet to "\
          "<b>#{qty_display(volume)}</b>."
        b = "  Pipet #{qty_display(volume)} from <b>#{source}</b>"\
          " into <b>#{destination}</b>"
      else
        times = (volume[:qty].to_f/max_volume).ceil.to_f
        sub_volume[:qty] = (volume[:qty] / times).round(self.class::ROUND_TO)
        a = "Set a <b>#{self.class::NAME}</b> pipet to "\
          "<b>#{qty_display(sub_volume)}</b>."
        b = "  Pipet #{times} times for #{qty_display(volume)} from <b>#{source}</b>"\
          " into <b>#{destination}</b>"
      end
      a + b
    end

    # Returns the number of channels a pipettor has
    #
    # @return Int
    def channels
      self.class::CHANNELS
    end
  end

  class PA6X1200 < Pipettor
    NAME = '6 Channel Adjustable Space P1200'.freeze
    MIN_VOLUME = 200.0
    MAX_VOLUME = 1000.0
    ROUND_TO = 0
    CHANNELS = 6
  end

  class P8X200 < Pipettor
    NAME = '8 Channel P200'.freeze
    MIN_VOLUME = 20.0
    MAX_VOLUME = 200.0
    ROUND_TO = 0
    CHANNELS = 8
  end

  class P2 < Pipettor
    NAME = 'P2'.freeze
    MIN_VOLUME = 0.0
    MAX_VOLUME = 2.0
    ROUND_TO = 1
    CHANNELS = 1
  end

  class P20 < Pipettor
    NAME = 'P20'.freeze
    MIN_VOLUME = 2.0
    MAX_VOLUME = 20.0
    ROUND_TO = 1
    CHANNELS = 1
  end

  class P200 < Pipettor
    NAME = 'P200'.freeze
    MIN_VOLUME = 20.0
    MAX_VOLUME = 200.0
    ROUND_TO = 0
    CHANNELS = 1
  end

  class P1000 < Pipettor
    NAME = 'P1000'.freeze
    MIN_VOLUME = 200.0
    MAX_VOLUME = 1000.0
    ROUND_TO = 0
    CHANNELS = 1
  end

  class PipetController < Pipettor
    NAME = 'Pipet controller'.freeze
    MIN_VOLUME = 2000.0
    MAX_VOLUME = 50000.0
    ROUND_TO = 0
    CHANNELS = 1
  end

end

library: {name: PlanParams, category: Standard Libs}
code_source:
# frozen_string_literal: true

# Module for handling options passed to a `Plan` or to `Operations`
# @author Devin Strickland <strcklnd@uw.edu>
module PlanParams
  # Gets `:options` from the `Plan` associations and the `Operations` and uses
  #   them to override `default_job_params`
  #
  # @note
  # @param operations [OperationList] the operations
  # @param default_job_params [Hash] the default parameters to be applied
  #   equally to all `Operations` in the `Job`
  # @return [Hash] the updated parameters to be applied equally to all
  #   `Operations` in the `Job`
  def update_job_params(operations:, default_job_params:)
    opts = strict_plan_options(operations)
    job_params = update_plan_params(plan_params: default_job_params, opts: opts)
    return job_params unless options_for?(operations)

    update_from_operations(
      operations: operations,
      job_params: job_params
    )
  rescue IncompatibleParametersError => e
    error_operations(operations: operations, err: e)
  end

  # Get Plan options from a list of Operations; raised an exception unless all
  #   Operations come from the same Plan
  #
  # @param operations [Array<Operation>] the Operations
  # @return [String] the options
  def strict_plan_options(operations)
    plans = operations.map(&:plan).uniq

    if plans.length > 1
      plan_ids = plans.map(&:id)
      msg = 'Operations must all be from a single Plan.' \
      " #{plan_ids.length} Plans found: #{plan_ids.to_sentence}"
      raise IncompatibleParametersError, msg
    end

    operations.first.plan.associations[:options]
  end

  # Check to see if any of the `Operations` have `Options` set
  #
  def options_for?(operations)
    operations.any? { |op| op.input('Options').try(:val).present? }
  end

  # Updates a hash from options
  #
  # @param plan_params [Hash] the receiver hash
  # @param opts [Hash] the donatng hash
  # @return [Hash]
  # @deprecate Use {#update_params} instead
  def update_plan_params(plan_params:, opts:)
    update_params(default_params: plan_params, opts: opts)
  end

  # Updates a hash from options
  #
  # @param default_params [Hash] the receiver hash
  # @param opts [Hash] the donatng hash
  # @return [Hash]
  def update_params(default_params:, opts:)
    default_params.update(parse_options(opts)) if opts.present?
    default_params
  end

  # Parses JSON formatted options
  #
  # @param opts [String] JSON-formatted string
  # @return [Hash]
  def parse_options(opts)
    JSON.parse(opts, { symbolize_names: true })
  end

  # Gets `Options` from each `Operation` and uses them to update
  #   `default_operation_params`, then applies the result to each
  #   `Operation` at `op.temporary[:options]`
  #
  # @param operations [OperationList] the operations
  # @param default_operation_params [Hash] the default parameters to be applied
  #   to all `Operations` in the `Job` UNLESS overriden by input 'Options'
  # @return [void]
  def update_operation_params(operations:, default_operation_params:)
    operations.each do |op|
      opts = default_operation_params.dup.update(op.input('Options').val)
      op.temporary[:options] = opts
    end
  end

  # Convenience method for calling both {#update_job_params} and
  #   {#update_operation_params}
  #
  # @param operations [OperationList] the operations
  # @param default_job_params [Hash] the default parameters to be applied
  #   equally to all `Operations` in the `Job`
  # @param default_operation_params [Hash] the default parameters to be applied
  #   to all `Operations` in the `Job` UNLESS overriden by input 'Options'
  # @return [Hash] the updated parameters to be applied to all
  #   `Operations` in the `Job`
  def update_all_params(operations:, default_job_params:,
                        default_operation_params:)
    job_params = update_job_params(
      operations: operations,
      default_job_params: default_job_params
    )
    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )
    job_params
  end

  ########## TESTING METHODS ##########

  TEST_PARAMS = {
    who_is_on_first: false
  }.freeze

  # Set everything up for testing using options
  #
  # @param operations [OperationList] the operations
  # @param options [Hash] the options
  # @return [void]
  def setup_test_options(operations:, opts: TEST_PARAMS)
    associate_plan_options(operations: operations, opts: opts)
    unify_plans(operations: operations)
  end

  # Add options to the `Plan` for testing purposes
  #
  # @param operations [OperationList] the operations
  # @param options [Hash] the options
  # @return [void]
  def associate_plan_options(operations:, opts:)
    plan = operations.first.plan
    plan.associate(:options, opts.to_json)
  end

  # Make all operations have the same plan
  #
  # @param operations [OperationList] the operations
  # @return [void]
  def unify_plans(operations:)
    plan_associations = operations.map { |op| op.plan_associations.first }
    plan = operations.first.plan
    plan_associations.each do |pa|
      pa.plan = plan
      pa.save
    end

    # Needed to refresh plan associations for weird Rails reasons
    Operation.find(operations.map(&:id))
  end

  # Get an option value for a given key from the given operation
  #
  def get_options(operations:, key:)
    operations.map { |op| get_option(operation: op, key: key) }
  end

  # Get an option value for a given key from the given operation
  #
  def get_option(operation:, key:)
    operation.input('Options').val.fetch(key, :no_key)
  end

  private

  # Update job_params based on options for the given operations
  #
  def update_from_operations(operations:, job_params:)
    job_params.keys.each do |key|
      val = strict_operations_option(operations: operations, key: key)
      job_params[key] = val unless val == :no_key
    end
    job_params
  end

  # Get a list of option values for a given key from the given operations list,
  #   or raise exception if there is more than one unique value
  #
  def strict_operations_option(operations:, key:)
    val = get_options(operations: operations, key: key)
    unless val.uniq.length == 1
      msg = "More than one value given in Operation Options for #{key}:" \
            " #{val}"
      raise IncompatibleParametersError, msg
    end
    val.first
  end

  # Say you're quitting due to an error and error all the operations
  #
  def error_operations(operations:, err:)
    show do
      title 'Incompatible Parameters Detected'
      warning err.message
    end

    operations.each { |op| op.error(:incompatible_parameters, err.message) }
  end

  class IncompatibleParametersError < ProtocolError; end
end

library: {name: Preconditions, category: Standard Libs}
code_source:
module Preconditions
  
  # Returns true if the specified operation input was created more than delta_time in the past
  #   e.g., time_elapsed op, "Plasmid", hours: 1, minutes: 30
  def time_elapsed op, input_name, delta_time = {days: 1}
    op.input_array(input_name).each do |input|
      t1 = get_t1 input
      t2 = Time.zone.now
  
      num_seconds = (delta_time[:minutes] || 0) * 60 +
                    (delta_time[:hours] || 0) * 60 * 60 +
                    (delta_time[:days] || 0) * 60 * 60 * 24
                    
      return false if t2 - t1 <= num_seconds
    end
    
    return true
  end
  
  def get_t1 input_fv
    if input_fv.item
      return input_fv.item.created_at
    elsif input_fv.predecessors.any?
      return input_fv.predecessors.first.updated_at
    else
      return Time.zone.now
    end
  end

end

library: {name: PrinterHelper, category: Standard Libs}
code_source:
# SG
# module for label printer
module PrinterHelper
    
    #------------------------------------------
    # print labels for samples
    # inputs:
    # ioStrs - array of strings, output items
    #------------------------------------------
    def printLabels(ioStrs)

        min_id=Float::INFINITY
        max_id=0 
        
        if(!ioStrs.kind_of?(Array)) # make sure input is an array
            ioStrs=[ioStrs]
        end
        
        show do
            title "Use label printer to label new 1.5 mL tubes with the following numbers:"
            operations.each { |op|
                ioStrs.each { |ioStr|
                    note "#{op.output(ioStr).item}"
                    min_id=[op.output(ioStr).item.id, min_id].min
                    max_id=[op.output(ioStr).item.id, max_id].max
                }
            }
            check "Ensure that the B33-143-492 labels are loaded in the printer. This number should be displayed on the printer. If not, check with a lab manager."
            check "Open the LabelMark 6 software."
            check "Select <b>Open </b> --> <b>File</b> --> <b>Serialized data top labels</b>"
            note "If an error about the printer appears, press <b>Okay</b>"
            check "Select the first label graphic, and click on the number in the middle of the label graphic."
            check "On the toolbar on the left, select <b>Edit serialized data</b>"
            if(max_id-min_id+1 == operations.length*ioStrs.length) # consecutive numbers
                check "Enter <b>#{min_id}</b> for the Start number and <b>#{operations.length*ioStrs.length}</b> for the Total number, and select <b>Finish</b>"
            else
                check "Enter the listed numbers manually and select <b>Finish</b>"
            end
            check "Select <b>File</b> --> <b>Print</b> and select <b>BBP33</b> as the printer option."
            check "Press <b>Print</b> and collect the labels."
            image "purify_gel_edit_serialized_data"
            image "Actions/purify_gel/purify_gel_sequential"
        end
    end # def
    
end # module

library: {name: Priority Queue, category: Standard Libs}
code_source:
class PriorityQueue 
  def initialize
    @heap = Heap.new()
    @priority_map = Hash.new()
  end

  def empty?
    @heap.empty?
  end

  def has_key?(key)
    @priority_map.has_key?(key)
  end

  def push(key, priority)
    node = PriorityNode.new(value: key, priority: priority)
    @priority_map[key] = priority
    @heap.add!(node)
  end

  def each(&blk)
    @priority_map.each(&blk)
  end

  def min
    @heap.peek.to_pair
  end

  def min_key
    return nil if empty?

    @heap.peek.value
  end

  def min_priority
    return nil if empty?

    @heap.peek.priority
  end

  # remove min and return pair
  def delete_min
    return nil if empty?

    min_node = @heap.remove!
    @priority_map.delete(min_node.value)
    min_node.to_pair
  end

  # remove min and return key
  def delete_min_return_key
    return nil if empty?

    min_value = @heap.remove!.value
    @priority_map.delete(min_value)
    min_value
  end

  private

  class PriorityNode
    include Comparable
    attr_reader :value, :priority

    def initialize(value:, priority:)
      @value = value
      @priority = priority
    end

    def <=>(node)
      @priority <=> node.priority
    end

    def to_pair
      [@value, @priority]
    end
  end

end

# Based on https://cs.lmu.edu/~ray/notes/pqueues/
class Heap
  def initialize
    @heap = []
  end

  def add!(x)
    @heap.append(x)
    sift_up(@heap.length - 1)
    self
  end

  def empty?
    @heap.length == 0
  end

  def peek
    @heap[0]
  end

  def remove!
    return nil if empty?

    value = @heap[0]
    if @heap.length == 1
      @heap = []
    else
      @heap[0] = @heap.pop
      sift_down(0)
    end
    value
  end

  def to_s
    @heap.to_s
  end

  private

  # Sift up the element at index i
  def sift_up(i)
    parent = (i - 1) / 2
    if parent >= 0 and @heap[parent] > @heap[i]
      @heap[parent], @heap[i] = @heap[i], @heap[parent]
      sift_up(parent)
    end
  end

  # Sift down the element at index i
  def sift_down(i)
    child = (i * 2) + 1
    return if child >= @heap.length
    child += 1 if child + 1 < @heap.length and @heap[child] > @heap[child+1]
    if @heap[i] > @heap[child]
      @heap[child], @heap[i] = @heap[i], @heap[child]
      sift_down(child)
    end
  end
end

library: {name: ProvenanceFinder, category: Standard Libs}
code_source:
module ProvenanceFinder
    # Finds output FieldValues for a given Item id.
    #
    # @param item_id [int] id of an Item
    # @return [ActiveRecord::Relation] FieldValues
    def output_fvs(item_id)
        FieldValue.where(role: 'output', child_item_id: item_id) || []
    end

    # Finds input FieldValues for a given Item id.
    #
    # @param item_id [int] id of an Item
    # @return [ActiveRecord::Relation] FieldValues
    def input_fvs(item_id)
        FieldValue.where(role: 'input', child_item_id: item_id) || []
    end

    # Finds Operations for which a given Item is an output.
    #
    # @param item_id [int] id of an Item
    # @return [Array] Operations that produced this item
    def predecessor_ops(item_id)
        output_fvs(item_id).map { |fv| fv.operation }
    end

    # Finds Operations for which a given Item is an input.
    #
    # @param item_id [int] id of an Item
    # @return [Array] Operations that used this item as input
    def successor_ops(item_id)
        input_fvs(item_id).map { |fv| fv.operation }
    end

    # Recursively finds the Operation backchain for a given item.
    # Goes back to a specified OperationType, then stops.
    #
    # @param stop_at [string] name of the OperationType of the Operation to stop at
    # @param item_id [int] id of an Item
    # @param row [string] the row location if the Item is a collection
    # @param column [string] the column location if the Item is a collection
    # @param ops [Array] the list of operations to be returned
    # @return [Array] the Operation backchain
    def walk_back(stop_at, item_id, row=nil, col=nil, ops=nil)
        ops ||= []

        pred_fvs = output_fvs(item_id)
        pred_fvs = pred_fvs.select { |fv| fv.row == row and fv.column == col }

        return ops unless pred_fvs.present?

        op_ids = ops.flatten.map { |op| op.id }
        pred_op_fvs = pred_fvs.select { |fv| fv.parent_class == "Operation" && ! op_ids.include?(fv.parent_id) }
        pred_op_ids = pred_op_fvs.map { |fv| fv.parent_id }
        pred_ops = Operation.where(id: pred_op_ids)
        # It's not clear to me why this should happen
        return ops unless pred_ops.present?

        pred_op = pred_ops.sort_by { |op| job_completed(op) }.first
        ops.append(pred_op)

        return ops if pred_op.operation_type.name == stop_at

        begin
            input_fv = get_input_fv(pred_op, item_id)

        rescue InputNotFoundError => e
            puts e.message
            return ops
        end

        if input_fv.field_type.array == true
            branches = []
            pred_op.input_array(input_fv.name).each do |fv|
                branches.append(walk_back(stop_at, fv.child_item_id, fv.row, fv.column))
            end
            ops.append(branches)
        end

        return walk_back(stop_at, input_fv.child_item_id, input_fv.row, input_fv.column, ops)
    end

    # Gets the completion date for the most recent Job for a given Operation.
    #
    # @param op [Operation]
    # @return [DateTime]
    def job_completed(op)
        jobs = op.jobs.sort_by { |job| job.updated_at }
        jobs.last.updated_at
    end

    # Determines the most likely input FieldValue for a given Operation and output Item.
    #
    # @param op [Operation] the Operation to search within
    # @param output_item_id [int] the id of the output Item
    # @return [FieldValue] the most likely input
    def get_input_fv(op, output_item_id)
        # If only one input, then the answer is obvious
        inputs = op.inputs
        return inputs[0] if inputs.length == 1

        # If more than one input, then it attempts to use routing
        routing_matches = get_routing_matches(op, output_item_id)
        return routing_matches[0] if routing_matches.present?

        # If no routing (bad developer!) then it attempts to match Sample name
        sample_name_matches = get_sample_name_matches(op, output_item_id)
        return sample_name_matches[0] if sample_name_matches.present?

        # Gives up
        raise InputNotFoundError.new(
            "No input for output item #{output_item_id} in operation #{op.id}."
        )
    end

    # Returns input FieldValues for the given Operation with the same routing as the given output Item
    #
    # @param op [Operation]
    # @param output_item_id [int]
    # @return [Array] input FieldValues that have the same routing as the output
    def get_routing_matches(op, output_item_id)
        fvs = FieldValue.where(
            role: 'output',
            parent_id: op.id,
            parent_class: 'Operation',
            child_item_id: output_item_id
        )

        fv = fvs.last
        op.inputs.select { |i| i.field_type && i.field_type.routing == fv.field_type.routing }
    end

    # Returns input FieldValues for the given Operation with the same Sample name as the given output Item
    #
    # @param op [Operation]
    # @param output_item_id [int]
    # @return [Array] input FieldValues that have the same sample name as the output
    def get_sample_name_matches(op, output_item_id)
        sn = Item.find(output_item_id).sample.name
        return op.inputs.select { |i| i.sample && i.sample.name == sn }
    end
end

class InputNotFoundError < StandardError
    def message
        "Could not find an input for this operation"
    end
end

class NoPredecessorsError < StandardError
    def message
        "No predecessor was found where one was expected"
    end
end

library: {name: SortHelper, category: Standard Libs}
code_source:
# SG
# functions for sorting operations
# 
# used in Library Cloning/Streak Plates on Media
module SortHelper
    
    #-----------------------------------------------------------------------------
    # sort ops by more than one input/output attribute, at io or item level 
    # algorithm: 
    # all possible unique values 1..n are sorted lexicographically and assigned numbers [1..n]
    # attributes add value in powers of ops.length**(k), where k is the REVERSE position of the attribute in the matrix. 
    # (most important == first.) 
    # ops.length insures that the first level is high enough 
    #-----------------------------------------------------------------------------
    def sortByMultipleIO(ops, ioStrs, ioNames, attributeStrs, itemLevels)
        
        allVals_mat=Array.new()
        ioStrs.each_with_index { |ioStr, i|
            allVals=[]
            keys=[]
            hash=Hash.new()
            caseArray=[ioStrs[i],itemLevels[i]]
            case caseArray
            when ["in","io"]
                allVals = ops.map { |op| op.input(ioNames[i]).send(attributeStrs[i]) } 
            when ["in","item"]
                allVals = ops.map { |op| op.input(ioNames[i]).item.send(attributeStrs[i]) } 
            when ["in","val"]
                allVals = ops.map { |op| op.input(ioNames[i]).val } 
            when ["in","collection"]
                allVals = ops.map { |op| op.input(ioNames[i]).collection.send(attributeStrs[i]) } 
            when ["out","io"]
                allVals = ops.map { |op| op.output(ioNames[i]).send(attributeStrs[i]) } 
            when ["out","item"]
                allVals = ops.map { |op| op.output(ioNames[i]).item.send(attributeStrs[i]) } 
            when ["out","val"]
                allVals = ops.map { |op| op.output(ioNames[i]).val } 
            when ["out","collection"]
                allVals = ops.map { |op| op.output(ioNames[i]).collection.send(attributeStrs[i]) } 
            else
                raise "Bad ioStr #{ioStr} in #{__method__.to_s}, please check!"
            end
            
            begin
                keys=allVals.uniq.sort 
            rescue
                raise "Can't sort [#{ioStrs[i]},#{itemLevels[i]}] in <b>#{__method__.to_s}</b>, please check!"
            end
            
            values=Array (0..keys.length-1)
            values.map! {|v| v=v*( (ops.length+1)**(ioStrs.length - i) ) }
            hash=Hash[keys.zip(values)]
            allVals_mat[i]=hash
        }
        
        ops.sort! { |a, b| sortVal(a, ioStrs, ioNames, attributeStrs, itemLevels, allVals_mat)  <=> sortVal(b, ioStrs, ioNames, attributeStrs, itemLevels, allVals_mat) }
        return ops
    end # def
  
    #-----------------------------------------------------------------------------
    # get op value for sort  
    #-----------------------------------------------------------------------------
    def sortVal(op, ioStrs, ioNames, attributeStrs, itemLevels, allVals_mat)
        val = 0
        allVals_mat.each_with_index { |hash, i|
            case [ioStrs[i],itemLevels[i]]
            when ["in","io"]
                val += hash[op.input(ioNames[i]).send(attributeStrs[i])]
            when ["in","item"]
                val += hash[op.input(ioNames[i]).item.send(attributeStrs[i])] 
            when ["in","val"]
                val += hash[op.input(ioNames[i]).val] 
            when ["in","collection"]
                val += hash[op.input(ioNames[i]).collection.send(attributeStrs[i])] 
            when ["out","io"]
                val += hash[op.output(ioNames[i]).send(attributeStrs[i])] 
            when ["out","item"]
                val += hash[op.output(ioNames[i]).item.send(attributeStrs[i])] 
            when ["out","val"]
                val += hash[op.output(ioNames[i]).val] 
            when ["out","collection"]
                val += hash[op.output(ioNames[i]).collection.send(attributeStrs[i])] 
            else
                raise "Bad input [#{ioStrs[i]},#{itemLevels[i]}] in <b>#{__method__.to_s}</b>, please check!"
            end
        }
        return val
    end # def
     
end # module

library: {name: TemporaryTubeLabels, category: Standard Libs}
code_source:
# Library for handling temporary tube labels used during operations.
#
# Assigns simplified labes to the OUTPUT Item of each operation.
# The basic method labels them as `[1,2,3,...]`, but this can be overridden.
module TemporaryTubeLabels
    def txfr_tube_labels(op, in_handle, out_handle)
        op.output(out_handle).item.associate :sample_tube_label, op.input(in_handle).item.associations[:sample_tube_label]
    end

    def sample_tube_label(obj, handle=nil)
        tube_label(obj, 'sample', handle)
    end

    def treatment_tube_label(obj, handle=nil)
        tube_label(obj, 'treatment', handle)
    end

    def tube_label(obj, type, handle=nil)
        item = handle ? obj.output(handle).item : obj
        item.associations["#{type}_tube_label".to_sym]
    end

    def tube_label_display(type, handle)
      labels = operations.map { |op| tube_label(op, type, handle) }
      case labels.length
      when 1
        labels[0]
      when 2..5
        labels.join(", ")
      else
        "#{labels.min}-#{labels.max}"
      end
    end

    def associate_sample_tube_labels(handle)
        associate_tube_labels('sample', handle)
    end

    # Assigns an incremental tube number for each output
    #
    def associate_tube_labels(type, handle)
        operations.each_with_index do |op, i|
            op.output(handle).item.associate("#{type}_tube_label".to_sym, "#{i + 1}")
        end
    end
end

library: {name: Units, category: Standard Libs}
code_source:
module Units
    
    EMPTY = -1
    
    # Special Characters
    MU = '&mu;'
    DEGREES = '&deg;'
    
    # Prefixes
    PICO = 'p'
    NANO = 'n'
    MICRO = MU
    MILLI = 'm'
    KILO = 'k'
    MEGA = 'M'
    GIGA = 'G'
    
    # Volume
    LITERS = 'l'
    MICROLITERS = MICRO + LITERS
    MILLILITERS = MILLI + LITERS
    
    # Weight
    GRAMS = 'g'
    NANOGRAMS = NANO + GRAMS
    MICROGRAMS = MICRO + GRAMS
    
    # Concentration
    MOLAR = 'M'
    PICOMOLAR = PICO + MOLAR
    NANOMOLAR = NANO + MOLAR
    MICROMOLAR = MICRO + MOLAR
    MILLIMOLAR = MILLI + MOLAR
    
    # Temperature
    CELSIUS = 'C'
    DEGREES_C = DEGREES + CELSIUS
    
    # Time
    MINUTES = 'min'
    SECONDS = 'sec'
    HOURS ='hr'
    
    # Force
    TIMES_G = 'x g'
    
    # R/DNA Length
    BASEPAIRS = 'bp'
    KILOBASEPAIRS = KILO + BASEPAIRS
    MEGABASEPAIRS = MEGA + BASEPAIRS
    GIGABASEPAIRS = GIGA + BASEPAIRS
    
    # Voltage
    VOLTS = 'V'
    MILLIVOLTS = MILLI + VOLTS

    def self.qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def add_qty_display(options)
        new_items = {}
        
        options.each do |key, value|
            key =~ /^(.+_)+([a-z]+)$/
            
            case $2
            when 'microliters'
                units = MICROLITERS
            when 'milliliters'
                units = MILLILITERS
            when 'minutes'
                units = MINUTES
            else
                next
            end
            
            qty = value.to_f
            
            new_items["#{$1}qty".to_sym] = { qty: qty, units: units }
        end
        
        options.update(new_items)
    end
    
    # Return the unit constant for the the unit name if there is one.
    #
    # @param unit_name [String] the name of the unit
    # @returns the value of the constant with the given name
    # @raises BadUnitNameError if the name is not the name of a defined unit
    def self.get_unit(unit_name:)
        self.const_get(unit_name.upcase)
      rescue
        raise BadUnitNameError.new(name: unit_name)
    end
    
    # Exception class for bad unit name arguments to Units::get_unit.
    #
    # @attr_reader [String] name  the bad unit name
    class BadUnitNameError < StandardError
        attr_reader :name
        
        def initialize(msg: "Unknown unit name", name:)
            @name = name
            super(msg)
        end
    end
    
    # Return a key for the measure hash defined on the given object type.
    #
    # The measure hash must be defined in the data proerty of the object type as JSON.
    # For instance
    #
    #   { "measure": { "type": "concentration", "unit": "micromolar" } }
    #
    # The key is constructed as the type name, an underscore, and the unit name.
    #
    # @param object_type [ObjectType] the object type
    # @returns the key for the measure of the the object type if there is one
    # @raises MissingObjectTypeMeasure if the object type has no measure data_object
    def self.get_measure_key(object_type:)
        data_object = object_type.data_object
        raise MissingObjectTypeMeasureError.new(name: object_type.name) if !data_object.key?(:measure)
        
        measure = object_type.data_object[:measure]
        type_name = measure[:type]
        unit_name = measure[:unit]
        "#{type_name}_#{self.get_unit(unit_name: unit_name)}"
    end
    
    # Exception class for an object type with out a measure hash definition.
    #
    # @attr_reader [String] name  the name of the object type where measure has was expected
    class MissingObjectTypeMeasureError < StandardError
        attr_reader :name
        
        def initialize(msg: "ObjectType has no measure in data object", name:)
            @name = name
            super(msg)
        end
    end
   
end

library: {name: UploadHelper, category: Standard Libs}
code_source:
# written by SG
# helper function for uploading files
# note: data associations should be handled externally
module UploadHelper
    
    require 'csv'
    require 'open-uri'
    
    #------------------------------------------
    # upload files 
    #
    # inputs:
    # dirname - directory where files are located, or full path including filename
    # expUploadNum - expected number of files to upload
    # tries - max. number of attempts to upload expectedNum files 
    #
    # returns: array of Upload items 
    #
    # EXAMPLES of how to associate correctly:     
    # data associations - 1st gel image        
    # up_bef=ups[0]
    # op.plan.associate "gel_image_bef", "combined gel fragment", up_bef  # upload association, link 
    # op.input(INPUT).item.associate "gel_image_bef", up_bef              # regular association
    # op.output(OUTPUT).item.associate "gel_image_bef", up_bef            # regular association 
    #------------------------------------------
    def uploadData(dirname, expUploadNum, tries)

        uploads={}      # holds result of upload block   
        numUploads=0    # number of uploads in current attempt
        attempt=0       # number of upload attempts
            
        # get uploads
        loop do
            #if(numUploads==expUploadNum)  
            #    show {note "Upload complete."}
            #end
            break if ( (attempt>=tries) || (numUploads==expUploadNum) ) # stopping condition
            attempt=attempt+1;
            uploads = show do
                title "Select <b>#{expUploadNum}</b> file(s)"
                note "File(s) location is: #{dirname}"
                if(attempt>1)
                    warning "Number of uploaded files (#{numUploads}) was incorrect, please try again! (Attempt #{attempt} of #{tries})"
                end
                upload var: "files"
            end
            # number of uploads    
            if(!uploads[:files].nil?)
                numUploads=uploads[:files].length
            end
        end
        
        if(numUploads!=expUploadNum)
            show {note "Final number of uploads (#{numUploads}) not equal to expected number #{expUploadNum}! Please check."}
            return nil
        end
        
        # format uploads before returning 
        ups=Array.new # array of upload hashes
        if (!uploads[:files].nil?)
            uploads[:files].each_with_index do |upload_hash, ii|
                up=Upload.find(upload_hash[:id]) 
                ups[ii]=up
            end
        end
        
        # return
        ups
        
    end # def
    
    
    # Opens .csv file upload item using its url and stores it line by line in a matrix
    #
    # @param upload [upload_obj] the file that you wish to read from
    # @return matrix [2D-Array] is the array of arrays of the rows read from file, if csv
    def read_url(upload)
        url = upload.url
        matrix = []
        CSV.new(open(url)).each {|line| matrix.push(line)}
        # open(url).each {|line| matrix.push(line.split(',')}
        return matrix
    end
     
end # module

   
